PsychoPy2experiment version="2022.2.3"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1920, 1080]
  color = -1.0000, -1.0000, -1.0000
  expName = car_panel_lexical_decision
  keyboardBackend = ioHub
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Routines
  Routine initialization
    CodeComponent function_definitions
      Code Type = Py
      Begin Experiment:
        import os
        import math

        def getImageWithKeyword(directory, keyword):
            image_extensions = {'.png', '.jpg', '.jpeg', '.gif', '.bmp', '.tiff', '.webp'}

            for root, _, files in os.walk(directory):
                for file in files:
                    if any(file.lower().endswith(ext) for ext in image_extensions) and keyword.lower() in file.lower():
                        return "/".join([root, file])

        def correctTextPosition(text_stim, text_position):
            bounding_box = [100, 100]
            return [text_position[0] + bounding_box[1]/2,
            text_position[1]]


        def correctPosition(icon_size, icon_position):

            return [icon_position[0] - icon_size[0]/2,
            icon_position[1] - icon_size[1]/2] # math.copysign(icon_size[0], icon_position[0])/2, math.copysign(icon_size[1], icon_position[1])/2]


        def correctPositionSmall(icon_size, icon_position):
            return [icon_position[0] + icon_size[0]/2, icon_position[1]]
    CodeComponent panel_initialization
      Code Type = Py
      Begin Experiment:
        import os

        # Example usage:
        class Panel:
            def __init__(self, x, y):
                self.x = x
                self.y = y
                self.column_spacing = 0.03
                self.row_spacing = 0.03
                self.scale_ratios = [1, 2/3]
                self.scale_empty_part = "top"
                self.panel_x_size = round(x * self.scale_ratios[0])
                self.panel_y_size = round(y * self.scale_ratios[1])
                self.panel_position = self.estimate_panel_position()

            def estimate_panel_position(self):

                if self.scale_empty_part == "top":
                    y_axis_shift = -1
                elif self.scale_empty_part == "bottom":
                    y_axis_shift = 1
                else:
                    y_axis_shift = 0

                if self.scale_empty_part == "left":
                    x_axis_shift = 1
                elif self.scale_empty_part == "right":
                    x_axis_shift = -1
                else:
                    x_axis_shift = 0

                return [round(0.5 * x_axis_shift * (self.x * (1 - self.scale_ratios[0]))),
                            round(0.5 * y_axis_shift * (self.y * (1 - self.scale_ratios[1])))]

            def generate_panel_layout(self, config):
                """
                Generates panel regions based on input config list.
                :param config: list of 4 integers, each 0 or 1
                               1 = single full-height panel in the column
                               0 = two half-height panels in the column
                :param win: object with win.x and win.y for screen width and height
                :return: list of panel region dictionaries with x, y, width, height
                """
                assert len(config) == 4, "Config must have exactly 4 elements (one per column)"
                assert all(c in (0, 1) for c in config), "Each config entry must be 0 or 1"

                window_origin_x = -self.x / 2
                window_origin_y = self.y / 2

                if self.scale_empty_part == "top":
                    window_origin_y = window_origin_y - self.panel_y_size / 2

                panel_width = self.panel_x_size
                panel_height = self.panel_y_size

                col_spacing_ratio = self.column_spacing
                row_spacing_ratio = self.row_spacing

                num_col_spacings = 5  # 3 between + 2 sides

                col_spacing = panel_width * col_spacing_ratio
                row_spacing = panel_height * row_spacing_ratio

                region_width = (panel_width - (col_spacing * num_col_spacings)) / 4

                regions = []

                for col in range(4):
                    x = window_origin_x + col_spacing * (col + 1) + region_width * col + region_width / 2

                    if config[col] == 1:
                        # Single full-height panel (minus top & bottom spacing)
                        height = panel_height - 2*row_spacing
                        y = window_origin_y - row_spacing - height / 2
                        regions.append({
                            "x": int(x),
                            "y": int(y),
                            "width": int(region_width),
                            "height": int(height)
                        })
                    else:
                        # Two half-height panels
                        height = (panel_height - 3 * row_spacing) / 2
                        for row in range(2):
                            y = window_origin_y - (row_spacing * (row + 1) + height * row) - height / 2
                            regions.append({
                                "x": int(x),
                                "y": int(y),
                                "width": int(region_width),
                                "height": int(height)
                            })

                return regions

            def roi_separator(self, panel, separation_count, separation_direction):
                """ This function is used for separating individual panels into regions.
                Purpose is to add clutter based on these regions.

                :param panel: (dict) enter the panel's dictionary (e.g. r[0] or r[target_panel])
                :param separation_count: (int) how many panels you want it to be separated into
                :param separation_direction: (str) direction of separation "vertical" or "horizontal"

                :return: a list of dictionaries of the separated region values (x, y, width, height)
                """

                assert isinstance(separation_direction, str), 'separation_direction must be a string.'

                if separation_direction == "vertical":
                    separation_axis = 'y'
                    separation_size = 'height'
                elif separation_direction == "horizontal":
                    separation_axis = 'x'
                    separation_size = 'width'
                else:
                    ValueError('f{separation_direction} is not a valid separation direction')

                clutter_regions = []

                for i in range(0, separation_count):
                    dummy_region = []
                    dummy_region = dict(panel)

                    panel_size = panel[separation_size] / separation_count

                    start_border = -round(i*panel_size)
                    end_border = -round((i+1)*panel_size)

                    section_origin = panel[separation_axis] + (panel[separation_size] / 2)


                    section_start = round(section_origin + start_border) # find region's start
                    section_end = round(section_origin + end_border)
                    section_mid = round((section_start + section_end) / 2) # find midpoint between region's start and end
                    section_size = abs(end_border - start_border)

                    dummy_region[separation_axis] = section_start
                    dummy_region[separation_size] = section_size

                    clutter_regions.append(dummy_region)


                return clutter_regions

            def get_region_coordinate(self, clutter, direction, placement_index, section_description=None):
                """ This function is used for obtaining axis coordinates for clutter placement

                :param clutter: (dict) enter the clutter's dictionary (e.g. clutter[0] or clutter[target_clutter])

                :param placement_index: (int) List of 2 integers indicating the placement:
                        - [place_index, place_range] > [1, 4] > [0, 1, 2, 3] > second element (1) is the coordinate
                :param section_description: "top" or "mid" part of the segmented region
                :return: point in coordinate system (x, y)
                """
                if direction == "vertical":
                    placement_axis = 'y'
                    placement_size = 'height'
                elif direction == "horizontal":
                    placement_axis = 'x'
                    placement_size = 'width'
                else:
                    ValueError('f{separation_direction} is not a valid separation direction')

                if section_description == None:
                    section_description = "mid"

                section_count = placement_index[1]
                for i in range(0, section_count):

                    section_size = clutter[placement_size] / section_count
                    start_border = round(i*section_size)
                    end_border = round((i+1)*section_size)
                    if clutter[placement_axis] >= 0:
                        start_border = -start_border
                        end_border = -end_border
                        section_origin = clutter[placement_axis] + (clutter[placement_size] / 2)
                    else:
                        section_origin = clutter[placement_axis] - (clutter[placement_size] / 2)

                    section_start = section_origin + start_border
                    section_end = section_origin + end_border
                    section_mid = round((section_start + section_end) / 2)
                    print('start border, end border', [start_border, end_border])
                    print('section start,mid,end', [section_start, section_mid, section_end])

                    if i == placement_index[0]:
                        if section_description == "mid":
                            return section_mid
                        elif section_description == "top":
                            return section_start
                        elif section_description == "bottom":
                            return section_end

            def getImageWithKeyword(self, directory, keyword):
                image_extensions = {'.png', '.jpg', '.jpeg', '.gif', '.bmp', '.tiff', '.webp'}

                for root, _, files in os.walk(directory):
                    for file in files:
                        if any(file.lower().endswith(ext) for ext in image_extensions) and keyword.lower() in file.lower():
                            return "/".join([root, file])
    CodeComponent experimental_parameters
      Code Type = Py
      disabled = True
      Begin Experiment:
        import math
        import random
        # select a panel for the large clutter 1 (duration, fuel, distance)
        # select from 0 to 6.
        clutter_panel = 0


        panel_layout = Panel(win.size[0], win.size[1])
        r = panel_layout.generate_panel_layout([1, 0, 0, 1])
        large_clutter1 = panel_layout.panel_separator(r[5], 3, "vertical")

        symbol_x_parse = [1, 10]
        text_x_parse = [8, 10]
        vertical_three_regions = [1, 3]

        # word widgets: Today, Navigation (Orlando), My home (garage door)
        # number widgets: Duration, Fuel, Distance

        large_clutter1_regions = []
        large_clutter1_text = []
        clutter_positions = [0, 3, 4, 5] # do not add clutter to second column (i.e. [1, 2])
        large_clutter1_content = {"header": "Current Trip", "duration": "0 hr 40 min", "fuel": "32 mpg", "distance": "54 mi"} # todo: add variable parameters to these text
        # if any key is navigation, place symbol to [5, 10] at header line
        small_clutter2_content = { "navigation": "Orlando", "day": "Monday"} # todo: get today's day using datetime
        small_clutter3_content = {"header": "My Home", "garage": "null"}
        large_clutter4_content = {"header": "Orlando",}

        for i in range(0,3):
            large_clutter1_regions.append([panel_layout.place_large_clutter(large_clutter1[i], "horizontal", symbol_x_parse),
            panel_layout.place_large_clutter(large_clutter1[i], "vertical", vertical_three_regions)])

            # "+large_clutter1[i]["width"] > compensates space for left aligned text
            large_clutter1_text.append([panel_layout.place_large_clutter(clutter1[i], "horizontal", text_x_parse),
            panel_layout.place_large_clutter(clutter1[i], "vertical", [1,3])])

        clutter_position_text = [panel_layout.place_large_clutter(clutter1[0], "horizontal", text_x_parse) + clutter1[0]["width"],
        panel_layout.place_large_clutter(clutter1[0], "vertical", [1,3])]

        clutter_position_text2 = [panel_layout.place_large_clutter(clutter1[1], "horizontal", text_x_parse) + clutter1[1]["width"],
        panel_layout.place_large_clutter(clutter1[1], "vertical", [1,3])]

        clutter_position_text3 = [panel_layout.place_large_clutter(clutter1[2], "horizontal", text_x_parse) + clutter1[2]["width"],
        panel_layout.place_large_clutter(clutter1[2], "vertical", [1,3])]

        clutter_size = [clutter1[0]["width"]/4, clutter1[0]["height"]/4]
        clutter_size2 = [clutter1[1]["width"]/4, clutter1[1]["height"]/4]
        clutter_size3 = [clutter1[2]["width"]/4, clutter1[2]["height"]/4]
    CodeComponent exp_init
      Code Type = Py
      Begin Routine:
        import calendar
        import json
        import math
        import random
        from datetime import date
        from datetime import datetime
        # select a panel for the large clutter 1 (duration, fuel, distance)
        # select from 0 to 6.
        clutter_panel = 0


        if 'win' not in locals():
            class win:
                def __init__(self):
                    self.size = [1920, 1080]
            window = win()
            panel_layout = Panel(window.size[0], window.size[1])

        else:
            panel_layout = Panel(win.size[0], win.size[1])

        widget_regions = panel_layout.generate_panel_layout([1, 0, 0, 1])



        # parse manual: panel is sliced based on the second element.
        # [1,3] > segments the panel into three and retrieves the second segment's midpoint.
        # [0,5] > segments the panel into five and retrieves the first segment's midpoint.

        symbol_x_parse = [0, 10]
        symbol_y_parse = [1, 3]

        # trip widget (duration, fuel, distance)
        text_x_parse = [7, 8]
        text_y_parse = [1, 3]

        trip_widget = {"info": {"parse": {"symbol": [symbol_x_parse, symbol_y_parse], "text": [text_x_parse, text_y_parse]}, "widget_index": 0},
                       "components": {"header": "Current Trip",
                                    "duration": "1 hr 53 min",
                                    "fuel": "34 mpg",
                                    "distance": "78 mi"},
                        "img_files": {},
                        "sym_component_positions": {},
                        "txt_component_positions": {}
                                    } # todo: add variable parameters to these text


        garage_widget = {"info": {"parse": {"symbol": [symbol_x_parse, symbol_y_parse], "text": [text_x_parse, text_y_parse]}, "widget_index": 1},
                         "components": {"header": "My Home",
                                        "garage": "Garage Door\nOpen"},
                        "img_files": {},
                        "sym_component_positions": {},
                        "txt_component_positions": {}
                        }

        temperature_widget = {"info": {"parse": {"symbol": [symbol_x_parse, symbol_y_parse], "text": [text_x_parse, text_y_parse]}, "widget_index": 3},
                       "components": {"temperature": None},
                        "img_files": {},
                        "sym_component_positions": {},
                        "txt_component_positions": {}
                       }



        battery_widget = {"info": {"parse": {"symbol": [symbol_x_parse, symbol_y_parse], "text": [text_x_parse, text_y_parse]}, "widget_index": 4},
                         "components": {"battery": None},
                        "img_files": {},
                        "sym_component_positions": {},
                        "txt_component_positions": {}
                        }

        day_widget = {"info": {"parse": {"symbol": [symbol_x_parse, symbol_y_parse], "text": [text_x_parse, text_y_parse]} , "widget_index": 5},
                         "components": {"header": "day",
                                        "calendar": None},
                        "img_files": {},
                        "sym_component_positions": {},
                        "txt_component_positions": {}
                        }


        section_desc = "mid"
        # first assume header to be the same size in terms of roi
        # then we can adjust it to become something else (smaller then etc.)
        def segment_roi(panel, roi, widget_dict):
            section_desc = "bottom"
            # garage widget (duration, fuel, distance)
            text_x_header = [4, 7]
            text_y_header = [2, 3]

            component_count = len(widget_dict["components"].keys())
            component_regions = panel.roi_separator(roi[widget_dict["info"]["widget_index"]], component_count, "vertical")
            iteration = 0
            widget_dict["component_regions"] = component_regions
            for key, comp_val in widget_dict["components"].items():

                if key != "header":
                    # get symbol positions
                    section_desc = "bottom"
                    widget_dict["sym_component_positions"][key] = [panel.get_region_coordinate(component_regions[iteration], "horizontal", widget_dict["info"]["parse"]["symbol"][0], section_desc),
                    panel.get_region_coordinate(component_regions[iteration], "vertical", widget_dict["info"]["parse"]["symbol"][1])]

                # get current day for text display on widget
                if comp_val == "day":
                    my_date = date.today()

                    today = datetime.now()
                    numeric_day = today.day # this is a integer
                    widget_dict["components"]["header"] = calendar.day_name[my_date.weekday()] +"\n" +str(numeric_day) # e.g. 'Wednesday'\nNumber
                    section_desc = "mid"

                if comp_val == None:
                    pass

                elif key == "header":
                    # headers are more leftward than regular text, hence specific text parsing
                    widget_dict["txt_component_positions"][key] = [panel.get_region_coordinate(component_regions[iteration], "horizontal", text_x_header),
                    panel.get_region_coordinate(component_regions[iteration], "vertical", text_y_header, section_desc)]

                else:
                    widget_dict["txt_component_positions"][key] = [panel.get_region_coordinate(component_regions[iteration], "horizontal", widget_dict["info"]["parse"]["text"][0]),
                    panel.get_region_coordinate(component_regions[iteration], "vertical", widget_dict["info"]["parse"]["text"][1])]

                # load in image
                if key == "header" or key == "text":
                    pass
                else:
                    widget_dict["img_files"][key] = panel.getImageWithKeyword("./stimuli/clutter", key)
                    print("added img file: ", panel.getImageWithKeyword("./stimuli/clutter", key))

                iteration = iteration + 1

            return widget_dict




        trip_widget = segment_roi(panel_layout, widget_regions, trip_widget)
        garage_widget = segment_roi(panel_layout, widget_regions, garage_widget)
        day_widget = segment_roi(panel_layout, widget_regions, day_widget)
        temperature_widget = segment_roi(panel_layout, widget_regions, temperature_widget)
        battery_widget = segment_roi(panel_layout, widget_regions, battery_widget)

        trip_widget["sym_component_positions"]["duration"]
        trip_widget["sym_component_positions"]["fuel"]
        trip_widget["sym_component_positions"]["distance"]


        print(widget_regions)
        print('trip_widget\n', json.dumps(trip_widget, indent=2))
        # print('\n\ngarage_widget\n',json.dumps(garage_widget, indent=2))
        # print('\n\ntemperature_widget\n',json.dumps(temperature_widget, indent=2))
        # print('\n\nbattery_widget',json.dumps(battery_widget, indent=2))
        print('\n\nday_widget\n',json.dumps(day_widget, indent=2))





        garage_icon_size = [garage_widget["component_regions"][1]["width"] * 0.35, garage_widget["component_regions"][1]["width"] * 0.35]
        onethird_icon_size = [trip_widget["component_regions"][0]["width"] * 0.3125, trip_widget["component_regions"][0]["width"] * 0.3125]
        half_icon_size = [day_widget["component_regions"][1]["width"] * 0.8, day_widget["component_regions"][1]["width"] * 0.8]
        full_icon_size = [temperature_widget["component_regions"][0]["width"] * 0.8, temperature_widget["component_regions"][0]["width"] * 0.8]


        textFont = "./stimuli/font/robotoflex.ttf"

        text_size = trip_widget["component_regions"][0]["width"]/12
        # choose a targel panel (1 to 10)
        # Panel Numbers: [1, [2/3], [4/5], 6]
        target_panel = 3

        # letter size is dependent on the large panel's height
        letter_size = temperature_widget["component_regions"][0]["height"]/5
        day_size = day_widget["component_regions"][0]["width"]/7
        header_size = trip_widget["component_regions"][0]["width"]/10
  Routine screen_display_images
    CodeComponent estimate_frame_durations_2
      Code Type = Py
      Begin Experiment:
        exp_clock = core.Clock()
        class placeholder:
            def __init__(self):
                self.boundingBox = [200, 200]


        placeholder_boundingbox = placeholder()
      Begin Routine:
        t_start_time = exp_clock.getTime()
        t_frame_time = []
      Each Frame:
        t_frame_time.append(round((exp_clock.getTime() - t_start_time)*1000,2))

        t_start_time = exp_clock.getTime()
      End Routine:
        thisExp.addData('trial_frame_durations', t_frame_time);
    ImageComponent background_panel
      image = stimuli/panels/background_panel.png
      pos [set every repeat] = panel_layout.panel_position
      size [set every repeat] = (panel_layout.panel_x_size, panel_layout.panel_y_size)
      startVal [time (s)] = 0.0
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    ImageComponent panel1
      image = stimuli/panels/large_panel.png
      pos [set every repeat] = (widget_regions[0]['x'], widget_regions[0]['y'])
      size [set every repeat] = (widget_regions[0]['width'], widget_regions[0]['height'])
      startVal [time (s)] = 0.0
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    ImageComponent panel2
      image = stimuli/panels/small_panel.png
      pos [set every repeat] = (widget_regions[1]['x'], widget_regions[1]['y'])
      size [set every repeat] = (widget_regions[1]['width'], widget_regions[1]['height'])
      startVal [time (s)] = 0.0
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    ImageComponent panel3
      image = stimuli/panels/small_panel.png
      pos [set every repeat] = (widget_regions[2]['x'], widget_regions[2]['y'])
      size [set every repeat] = (widget_regions[2]['width'], widget_regions[2]['height'])
      startVal [time (s)] = 0.0
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    ImageComponent panel4
      image = stimuli/panels/small_panel.png
      pos [set every repeat] = (widget_regions[3]['x'], widget_regions[3]['y'])
      size [set every repeat] = (widget_regions[3]['width'], widget_regions[3]['height'])
      startVal [time (s)] = 0.0
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    ImageComponent panel5
      image = stimuli/panels/small_panel.png
      pos [set every repeat] = (widget_regions[4]['x'], widget_regions[4]['y'])
      size [set every repeat] = (widget_regions[4]['width'], widget_regions[4]['height'])
      startVal [time (s)] = 0.0
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    ImageComponent panel6
      image = stimuli/panels/large_panel.png
      pos [set every repeat] = (widget_regions[5]['x'], widget_regions[5]['y'])
      size [set every repeat] = (widget_regions[5]['width'], widget_regions[5]['height'])
      startVal [time (s)] = 0.0
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    TextComponent lexical_text_2
      color = black
      font [set every repeat] = $currentFont
      letterHeight [set every repeat] = letter_size
      pos [set every repeat] = (widget_regions[target_panel-1]['x'], widget_regions[target_panel-1]['y'])
      startVal [time (s)] = 0.0
      text [set every repeat] = $text
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    ImageComponent widget1_symbol1
      image [set every repeat] = $trip_widget["img_files"]["duration"]
      pos [set every repeat] = correctPositionSmall(onethird_icon_size, trip_widget["sym_component_positions"]["duration"])
      size [set every repeat] = onethird_icon_size
      startVal [time (s)] = 0.0
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    ImageComponent widget1_symbol2
      image [set every repeat] = $trip_widget["img_files"]["fuel"]
      pos [set every repeat] = correctPositionSmall(onethird_icon_size, trip_widget["sym_component_positions"]["fuel"])
      size [set every repeat] = onethird_icon_size
      startVal [time (s)] = 0.0
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    ImageComponent widget1_symbol3
      image [set every repeat] = $trip_widget["img_files"]["distance"]
      pos [set every repeat] = correctPositionSmall(onethird_icon_size, trip_widget["sym_component_positions"]["distance"])
      size [set every repeat] = onethird_icon_size
      startVal [time (s)] = 0.0
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    TextComponent widget1_text1
      color = black
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = text_size
      pos [set every repeat] = correctTextPosition(widget1_text1, trip_widget["txt_component_positions"]["duration"])
      startVal [time (s)] = 0.0
      text [set every repeat] = $trip_widget["components"]["duration"]
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    TextComponent widget1_text2
      color = black
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = text_size
      pos [set every repeat] = correctTextPosition(widget1_text2,trip_widget["txt_component_positions"]["fuel"])
      startVal [time (s)] = 0.0
      text [set every repeat] = $trip_widget["components"]["fuel"]
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    TextComponent widget1_text3
      color = black
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = text_size
      pos [set every repeat] = correctTextPosition(widget1_text3, trip_widget["txt_component_positions"]["distance"])
      startVal [time (s)] = 0.0
      text [set every repeat] = $trip_widget["components"]["distance"]
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    TextComponent widget1_text4
      color = black
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = header_size
      pos [set every repeat] = correctTextPosition(widget1_text4,trip_widget["txt_component_positions"]["header"])
      startVal [time (s)] = 0.0
      text [set every repeat] = $trip_widget["components"]["header"]
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    ImageComponent widget2_symbol1
      image [set every repeat] = $garage_widget["img_files"]["garage"]
      pos [set every repeat] = correctPositionSmall(garage_icon_size, garage_widget["sym_component_positions"]["garage"])
      size [set every repeat] = garage_icon_size
      startVal [time (s)] = 0.0
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    TextComponent widget2_text1
      color = black
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = header_size
      pos [set every repeat] = correctTextPosition(widget2_text1,garage_widget["txt_component_positions"]["header"])
      startVal [time (s)] = 0.0
      text [set every repeat] = $garage_widget["components"]["header"]
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    TextComponent widget2_text2
      color = black
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = text_size
      pos [set every repeat] = correctTextPosition(widget2_text2, garage_widget["txt_component_positions"]["garage"])
      startVal [time (s)] = 0.0
      text [set every repeat] = $garage_widget["components"]["garage"]
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    ImageComponent widget3_symbol1
      image [set every repeat] = $temperature_widget["img_files"]["temperature"]
      pos [set every repeat] = correctPosition(full_icon_size, temperature_widget["sym_component_positions"]["temperature"])
      size [set every repeat] = full_icon_size
      startVal [time (s)] = 0.0
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    ImageComponent widget4_symbol1
      image [set every repeat] = $battery_widget["img_files"]["battery"]
      pos [set every repeat] = correctPosition(full_icon_size, battery_widget["sym_component_positions"]["battery"])
      size [set every repeat] = full_icon_size
      startVal [time (s)] = 0.0
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    TextComponent widget5_text1
      color = black
      flip [set every repeat] = None
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = day_size
      ori [set every repeat] = 0
      pos [set every repeat] = correctTextPosition(widget5_text1, day_widget["txt_component_positions"]["header"])
      startVal [time (s)] = 0.0
      text [set every repeat] = $day_widget["components"]["header"]
      wrapWidth = 200
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    ImageComponent widget5_symbol1
      image [set every repeat] = $day_widget["img_files"]["calendar"]
      pos [set every repeat] = correctPosition(half_icon_size, day_widget["sym_component_positions"]["calendar"])
      size [set every repeat] = half_icon_size
      startVal [time (s)] = 0.0
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    KeyboardComponent keybaord_input_2
      allowedKeys = 'y','n'
      correctAns = $correct_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent align_text
      Code Type = Py
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      Begin Routine:
        alignment_var = "left"


        widget1_text1.alignText = alignment_var
        widget1_text2.alignText = alignment_var
        widget1_text3.alignText = alignment_var
        widget1_text4.alignText = alignment_var

        widget2_text1.alignText = alignment_var
        widget2_text2.alignText = alignment_var

        widget5_text1.alignText = alignment_var

        widget1_text4.bold = True
        widget2_text1.bold = True
        widget5_text1.bold = True
  Routine inter_trial_interval
    CodeComponent randomize_iti
      Code Type = Py
      Begin Routine:
        t_start_time = exp_clock.getTime()
        t_frame_time = []

        iti_duration = random.randint(1000,3000)/1000 # duration in msec units

        print(iti_duration)
        print('printed boundingbox', widget5_text1.boundingBox)
      Each Frame:
        t_frame_time.append(round((exp_clock.getTime() - t_start_time)*1000,2))

        t_start_time = exp_clock.getTime()
      End Routine:
        thisExp.addData('trial_frame_durations', t_frame_time);
    ImageComponent background_panel_2
      image = stimuli/panels/background_panel.png
      pos [set every repeat] = panel_layout.panel_position
      size [set every repeat] = (panel_layout.panel_x_size, panel_layout.panel_y_size)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = iti_duration
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    ImageComponent panel1_2
      image = stimuli/panels/large_panel.png
      pos [set every repeat] = (widget_regions[0]['x'], widget_regions[0]['y'])
      size [set every repeat] = (widget_regions[0]['width'], widget_regions[0]['height'])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = iti_duration
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    ImageComponent panel2_2
      image = stimuli/panels/small_panel.png
      pos [set every repeat] = (widget_regions[1]['x'], widget_regions[1]['y'])
      size [set every repeat] = (widget_regions[1]['width'], widget_regions[1]['height'])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = iti_duration
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    ImageComponent panel3_2
      image = stimuli/panels/small_panel.png
      pos [set every repeat] = (widget_regions[2]['x'], widget_regions[2]['y'])
      size [set every repeat] = (widget_regions[2]['width'], widget_regions[2]['height'])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = iti_duration
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    ImageComponent panel4_2
      image = stimuli/panels/small_panel.png
      pos [set every repeat] = (widget_regions[3]['x'], widget_regions[3]['y'])
      size [set every repeat] = (widget_regions[3]['width'], widget_regions[3]['height'])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = iti_duration
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    ImageComponent panel5_2
      image = stimuli/panels/small_panel.png
      pos [set every repeat] = (widget_regions[4]['x'], widget_regions[4]['y'])
      size [set every repeat] = (widget_regions[4]['width'], widget_regions[4]['height'])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = iti_duration
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    ImageComponent panel6_2
      image = stimuli/panels/large_panel.png
      pos [set every repeat] = (widget_regions[5]['x'], widget_regions[5]['y'])
      size [set every repeat] = (widget_regions[5]['width'], widget_regions[5]['height'])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = iti_duration
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    ImageComponent widget1_symbol1_2
      image [set every repeat] = $trip_widget["img_files"]["duration"]
      pos [set every repeat] = correctPositionSmall(onethird_icon_size, trip_widget["sym_component_positions"]["duration"])
      size [set every repeat] = onethird_icon_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = iti_duration
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    ImageComponent widget1_symbol2_2
      image [set every repeat] = $trip_widget["img_files"]["fuel"]
      pos [set every repeat] = correctPositionSmall(onethird_icon_size, trip_widget["sym_component_positions"]["fuel"])
      size [set every repeat] = onethird_icon_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = iti_duration
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    ImageComponent widget1_symbol3_2
      image [set every repeat] = $trip_widget["img_files"]["distance"]
      pos [set every repeat] = correctPositionSmall(onethird_icon_size, trip_widget["sym_component_positions"]["distance"])
      size [set every repeat] = onethird_icon_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = iti_duration
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    TextComponent widget1_text1_2
      color = black
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = text_size
      pos [set every repeat] = correctTextPosition(widget1_text1_2, trip_widget["txt_component_positions"]["duration"])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = iti_duration
      text [set every repeat] = $trip_widget["components"]["duration"]
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    TextComponent widget1_text2_2
      color = black
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = text_size
      pos [set every repeat] = correctTextPosition(widget1_text2_2,trip_widget["txt_component_positions"]["fuel"])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = iti_duration
      text [set every repeat] = $trip_widget["components"]["fuel"]
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    TextComponent widget1_text3_2
      color = black
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = text_size
      pos [set every repeat] = correctTextPosition(widget1_text3_2, trip_widget["txt_component_positions"]["distance"])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = iti_duration
      text [set every repeat] = $trip_widget["components"]["distance"]
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    TextComponent widget1_text4_2
      color = black
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = header_size
      pos [set every repeat] = correctTextPosition(widget1_text4_2, trip_widget["txt_component_positions"]["header"])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = iti_duration
      text [set every repeat] = $trip_widget["components"]["header"]
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    ImageComponent widget2_symbol1_2
      image [set every repeat] = $garage_widget["img_files"]["garage"]
      pos [set every repeat] = correctPositionSmall(garage_icon_size, garage_widget["sym_component_positions"]["garage"])
      size [set every repeat] = garage_icon_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = iti_duration
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    TextComponent widget2_text1_2
      color = black
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = header_size
      pos [set every repeat] = correctTextPosition(widget2_text1_2, garage_widget["txt_component_positions"]["header"])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = iti_duration
      text [set every repeat] = $garage_widget["components"]["header"]
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    TextComponent widget2_text2_2
      color = black
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = text_size
      pos [set every repeat] = correctTextPosition(widget2_text2_2, garage_widget["txt_component_positions"]["garage"])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = iti_duration
      text [set every repeat] = $garage_widget["components"]["garage"]
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    ImageComponent widget3_symbol1_2
      image [set every repeat] = $temperature_widget["img_files"]["temperature"]
      pos [set every repeat] = correctPosition(full_icon_size, temperature_widget["sym_component_positions"]["temperature"])
      size [set every repeat] = full_icon_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = iti_duration
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    ImageComponent widget4_symbol1_2
      image [set every repeat] = $battery_widget["img_files"]["battery"]
      pos [set every repeat] = correctPosition(full_icon_size, battery_widget["sym_component_positions"]["battery"])
      size [set every repeat] = full_icon_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = iti_duration
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    TextComponent widget5_text1_2
      color = black
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = day_size
      pos [set every repeat] = correctTextPosition(widget5_text1_2, day_widget["txt_component_positions"]["header"])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = iti_duration
      text [set every repeat] = $day_widget["components"]["header"]
      wrapWidth = 200
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    ImageComponent widget5_symbol1_2
      image [set every repeat] = $day_widget["img_files"]["calendar"]
      pos [set every repeat] = correctPosition(half_icon_size, day_widget["sym_component_positions"]["calendar"])
      size [set every repeat] = half_icon_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = iti_duration
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    CodeComponent align_text_2
      Code Type = Py
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      Begin Routine:
        alignment_var = "left"


        widget1_text1_2.alignText = alignment_var
        widget1_text2_2.alignText = alignment_var
        widget1_text3_2.alignText = alignment_var
        widget1_text4_2.alignText = alignment_var

        widget2_text1_2.alignText = alignment_var
        widget2_text2_2.alignText = alignment_var

        widget5_text1_2.alignText = alignment_var

        widget1_text4_2.bold = True
        widget2_text1_2.bold = True
        widget5_text1_2.bold = True
Flow
  Routine initialization
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stimulus_sheet.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'text': 'accent', 'wordNonword': 'w', 'currentFont': 'Arial'},
      {'text': 'aching', 'wordNonword': 'w', 'currentFont': 'Arial'},
      {'text': 'adding', 'wordNonword': 'w', 'currentFont': 'Arial'},
      {'text': 'advent', 'wordNonword': 'w', 'currentFont': 'Arial'},
      {'text': 'advise', 'wordNonword': 'w', 'currentFont': 'Arial'},
      {'text': 'affect', 'wordNonword': 'w', 'currentFont': 'Arial'},
      {'text': 'agrees', 'wordNonword': 'w', 'currentFont': 'Arial'},
      {'text': 'aiming', 'wordNonword': 'w', 'currentFont': 'Arial'},
      {'text': 'alight', 'wordNonword': 'w', 'currentFont': 'Arial'},
      {'text': 'allied', 'wordNonword': 'w', 'currentFont': 'Arial'},
      {'text': 'allows', 'wordNonword': 'w', 'currentFont': 'Arial'},
      {'text': 'amazed', 'wordNonword': 'w', 'currentFont': 'Arial'},
      {'text': 'angels', 'wordNonword': 'w', 'currentFont': 'Arial'},
      {'text': 'angles', 'wordNonword': 'w', 'currentFont': 'Arial'},
      {'text': 'annual', 'wordNonword': 'w', 'currentFont': 'Arial'},
      {'text': 'appear', 'wordNonword': 'w', 'currentFont': 'Arial'},
      {'text': 'archer', 'wordNonword': 'w', 'currentFont': 'Arial'},
      {'text': 'ardent', 'wordNonword': 'w', 'currentFont': 'Arial'},
      {'text': 'argues', 'wordNonword': 'w', 'currentFont': 'Arial'},
      {'text': 'arises', 'wordNonword': 'w', 'currentFont': 'Arial'},
      {'text': 'arouse', 'wordNonword': 'w', 'currentFont': 'Arial'},
      {'text': 'assert', 'wordNonword': 'w', 'currentFont': 'Arial'},
      {'text': 'assets', 'wordNonword': 'w', 'currentFont': 'Arial'},
      {'text': 'assure', 'wordNonword': 'w', 'currentFont': 'Arial'}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
    Routine screen_display_images
    Routine inter_trial_interval
  LoopTerminator trials
