PsychoPy2experiment version="2022.2.3"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1900, 1080]
  color = -1.0000, -1.0000, -1.0000
  expName = car_panel_lexical_decision
  keyboardBackend = ioHub
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Routines
  Routine initialization
    CodeComponent function_definitions
      Code Type = Py
      Begin Experiment:
        from pprint import pprint
        import calendar
        import json
        import math
        import random
        from datetime import date
        from datetime import datetime
        import os

        def getDateTimeText():
            # get current day for text display on calemdar widget
            my_date = date.today()
            today = datetime.now()
            month_index = datetime.now().month
            month = calendar.month_name[month_index]
            numeric_day = today.day # this is a integer
            str_num_day = str(numeric_day)
            if str_num_day[-1] == '1':
                day_suffix = 'st'
            elif str_num_day[-1] == '2':
                day_suffix = 'nd'
            elif str_num_day[-1] == '3':
                day_suffix = 'rd'
            elif int(str_num_day[-1]) >= 4:
                day_suffix = 'th'

            return str_num_day + day_suffix + " " + month +"\n" + calendar.day_name[my_date.weekday()] # e.g. 'Wednesday'\nNumber


        def getImageWithKeyword(directory, keyword):
            image_extensions = {'.png', '.jpg', '.jpeg', '.gif', '.bmp', '.tiff', '.webp'}

            for root, _, files in os.walk(directory):
                for file in files:
                    if any(file.lower().endswith(ext) for ext in image_extensions) and keyword.lower() in file.lower():
                        return "/".join([root, file])

        def correctTextPosition(text_stim, text_position):
            if hasattr(text_stim, 'boundingBox'):
                print('HERE IS THE BOUNDING BOX ', text_stim.boundingBox)
                return [text_position[0] + text_stim.boundingBox[0]/2, text_position[1]]
            else:
                return text_position

        def correctPosition(icon_size, icon_position):
            return icon_position
        #    return [icon_position[0] - icon_size[0]/2,
        #    icon_position[1] - icon_size[1]/2] # math.copysign(icon_size[0], icon_position[0])/2, math.copysign(icon_size[1], icon_position[1])/2]
        #

        def correctPositionSmall(icon_size, icon_position):
            return icon_position
        #    return [icon_position[0] + icon_size[0]/2, icon_position[1]]
    CodeComponent panel_initialization
      Code Type = Py
      Begin Experiment:
        # Example usage:
        class Panel:
            def __init__(self, x, y):
                self.x = x
                self.y = y
                self.column_spacing = 0.03
                self.row_spacing = 0.03
                self.scale_ratios = [1, 2/3]
                self.scale_empty_part = "bottom"
                self.panel_x_size = round(x * self.scale_ratios[0])
                self.panel_y_size = round(y * self.scale_ratios[1])
                self.panel_position = self.estimate_panel_position()

            def estimate_panel_position(self):

                if self.scale_empty_part == "top":
                    y_axis_shift = -1
                elif self.scale_empty_part == "bottom":
                    y_axis_shift = 1
                else:
                    y_axis_shift = 0

                if self.scale_empty_part == "left":
                    x_axis_shift = 1
                elif self.scale_empty_part == "right":
                    x_axis_shift = -1
                else:
                    x_axis_shift = 0

                return [round(0.5 * x_axis_shift * (self.x * (1 - self.scale_ratios[0]))),
                            round(0.5 * y_axis_shift * (self.y * (1 - self.scale_ratios[1])))]

            def generate_panel_layout(self, config):
                """
                Generates panel regions based on input config list.
                :param config: list of 4 integers, each 0 or 1
                               1 = single full-height panel in the column
                               0 = two half-height panels in the column
                :param win: object with win.x and win.y for screen width and height
                :return: list of panel region dictionaries with x, y, width, height
                """
                assert len(config) == 4, "Config must have exactly 4 elements (one per column)"
                assert all(c in (0, 1) for c in config), "Each config entry must be 0 or 1"

                window_origin_x = -self.x / 2
                window_origin_y = self.y / 2

                if self.scale_empty_part == "top":
                    window_origin_y = window_origin_y - self.panel_y_size / 2

                panel_width = self.panel_x_size
                panel_height = self.panel_y_size
                col_spacing_ratio = self.column_spacing
                row_spacing_ratio = self.row_spacing
                num_col_spacings = 5  # 3 between + 2 sides
                col_spacing = panel_width * col_spacing_ratio
                row_spacing = panel_height * row_spacing_ratio
                region_width = (panel_width - (col_spacing * num_col_spacings)) / 4
                regions = []

                for col in range(4):
                    x = window_origin_x + col_spacing * (col + 1) + region_width * col + region_width / 2
                    if config[col] == 1:
                        # Single full-height panel (minus top & bottom spacing)
                        height = panel_height - 2*row_spacing
                        y = window_origin_y - row_spacing - height / 2
                        regions.append({
                            "x": int(x),
                            "y": int(y),
                            "width": int(region_width),
                            "height": int(height)
                        })
                    else:
                        # Two half-height panels
                        height = (panel_height - 3 * row_spacing) / 2
                        for row in range(2):
                            y = window_origin_y - (row_spacing * (row + 1) + height * row) - height / 2
                            regions.append({
                                "x": int(x),
                                "y": int(y),
                                "width": int(region_width),
                                "height": int(height)
                            })

                return regions

            def panel_separator(self, panel, separation_count, separation_direction):
                """ This function is used for separating individual panels into regions.
                Purpose is to add clutter based on these regions.

                :param panel: (dict) enter the panel's dictionary (e.g. r[0] or r[target_panel])
                :param separation_count: (int) how many panels you want it to be separated into
                :param separation_direction: (str) direction of separation "vertical" or "horizontal"

                :return: a list of dictionaries of the separated region values (x, y, width, height)
                """
                assert isinstance(separation_direction, str), 'separation_direction must be a string.'

                if separation_direction == "vertical":
                    separation_axis = 'y'
                    separation_size = 'height'
                    isHorizontal = -1
                elif separation_direction == "horizontal":
                    separation_axis = 'x'
                    separation_size = 'width'
                    isHorizontal = 1
                else:
                    ValueError('f{separation_direction} is not a valid separation direction')

                section_size = panel[separation_size] / separation_count
                section_origin = panel[separation_axis] + (panel[separation_size] / 2)

                clutter_regions = []
                dummy_region = {}
                for i in range(0, separation_count):
                    dummy_region = dict(panel)


                    start_border = isHorizontal * round(i*section_size)
                    end_border = isHorizontal * round((i+1)*section_size)


                    section_start = round(section_origin + start_border) # find region's start
                    section_end = round(section_origin + end_border)
                    section_mid = round((section_start + section_end) / 2) # find midpoint between region's start and end

                    dummy_region[separation_axis] = section_start
                    dummy_region[separation_size] = section_size
                    clutter_regions.append(dummy_region)

                return clutter_regions

            def get_clutter_coordinate(self, clutter_region, direction, placement_index, placement_description=None):
                """ This function is used for obtaining axis coordinates for clutter placement

                :param clutter_region: (dict) enter the clutter's region dictionary obtained by clutter_separator (e.g. clutter[0] or clutter[target_clutter])

                :param placement_index: (int) List of 2 integers indicating the placement:
                        - [place_index, place_range] > [1, 4] > [0, 1, 2, 3] > second element (1) is the coordinate
                :param placement_description: "top" or "mid" part of the segmented region
                :return: point in coordinate system (x, y)
                """
                if direction == "vertical":
                    placement_axis = 'y'
                    placement_size = 'height'
                    isHorizontal = -1
                    section_origin =  clutter_region[placement_axis]
                elif direction == "horizontal":
                    placement_axis = 'x'
                    placement_size = 'width'
                    isHorizontal = 1
                    section_origin =  clutter_region[placement_axis] - (clutter_region[placement_size] / 2)
                else:
                    ValueError('f{separation_direction} is not a valid separation direction')

                if placement_description == None:
                    placement_description = "mid"

                section_count = placement_index[1]

                section_size = clutter_region[placement_size] / section_count

                for i in range(0, section_count):
                    start_border = isHorizontal * round(i*section_size)
                    end_border = isHorizontal * round((i+1)*section_size)

                    section_start = section_origin + start_border
                    section_end = section_origin + end_border
                    section_mid = round((section_start + section_end) / 2)

                    if i == placement_index[0]:
                        if placement_description == "mid":
                            return section_mid
                        elif placement_description == "top":
                            if placement_axis == 'y':
                                print('selected top - section start', section_start)
                                print('selected top - section origin', section_origin)
                            return section_start
                        elif placement_description == "bottom":
                            return section_end

            def getImageWithKeyword(self, directory, keyword):
                image_extensions = {'.png', '.jpg', '.jpeg', '.gif', '.bmp', '.tiff', '.webp'}

                for root, _, files in os.walk(directory):
                    for file in files:
                        if any(file.lower().endswith(ext) for ext in image_extensions) and keyword.lower() in file.lower():
                            return "/".join([root, file])
    CodeComponent experimental_parameters
      Code Type = Py
      disabled = True
      Begin Experiment:
        import math
        import random
        # select a panel for the large clutter 1 (duration, fuel, distance)
        # select from 0 to 6.
        clutter_panel = 0


        panel_layout = Panel(win.size[0], win.size[1])
        r = panel_layout.generate_panel_layout([1, 0, 0, 1])
        large_clutter1 = panel_layout.panel_separator(r[5], 3, "vertical")

        symbol_x_parse = [1, 10]
        text_x_parse = [8, 10]
        vertical_three_regions = [1, 3]

        # word widgets: Today, Navigation (Orlando), My home (garage door)
        # number widgets: Duration, Fuel, Distance

        large_clutter1_regions = []
        large_clutter1_text = []
        clutter_positions = [0, 3, 4, 5] # do not add clutter to second column (i.e. [1, 2])
        large_clutter1_content = {"header": "Current Trip", "duration": "0 hr 40 min", "fuel": "32 mpg", "distance": "54 mi"} # todo: add variable parameters to these text
        # if any key is navigation, place symbol to [5, 10] at header line
        small_clutter2_content = { "navigation": "Orlando", "day": "Monday"} # todo: get today's day using datetime
        small_clutter3_content = {"header": "My Home", "garage": "null"}
        large_clutter4_content = {"header": "Orlando",}

        for i in range(0,3):
            large_clutter1_regions.append([panel_layout.place_large_clutter(large_clutter1[i], "horizontal", symbol_x_parse),
            panel_layout.place_large_clutter(large_clutter1[i], "vertical", vertical_three_regions)])

            # "+large_clutter1[i]["width"] > compensates space for left aligned text
            large_clutter1_text.append([panel_layout.place_large_clutter(clutter1[i], "horizontal", text_x_parse),
            panel_layout.place_large_clutter(clutter1[i], "vertical", [1,3])])

        clutter_position_text = [panel_layout.place_large_clutter(clutter1[0], "horizontal", text_x_parse) + clutter1[0]["width"],
        panel_layout.place_large_clutter(clutter1[0], "vertical", [1,3])]

        clutter_position_text2 = [panel_layout.place_large_clutter(clutter1[1], "horizontal", text_x_parse) + clutter1[1]["width"],
        panel_layout.place_large_clutter(clutter1[1], "vertical", [1,3])]

        clutter_position_text3 = [panel_layout.place_large_clutter(clutter1[2], "horizontal", text_x_parse) + clutter1[2]["width"],
        panel_layout.place_large_clutter(clutter1[2], "vertical", [1,3])]

        clutter_size = [clutter1[0]["width"]/4, clutter1[0]["height"]/4]
        clutter_size2 = [clutter1[1]["width"]/4, clutter1[1]["height"]/4]
        clutter_size3 = [clutter1[2]["width"]/4, clutter1[2]["height"]/4]
    CodeComponent exp_init
      Code Type = Py
      Begin Experiment:
        def getChangeIndex(dyn_values, chang_indx):
            change_order = []
            # chang_indx represents the len(keys) in dynamic_clutter_values
            while True:
                rand_indx = random.randint(0, len(chang_indx) - 1)
                if chang_indx[rand_indx] != 0:
                    cur_clut = dyn_values[rand_indx]
                    keys = list(cur_clut.keys())
                    selectAgain = False
                    while True:
                        rand_keyi = random.randint(0, len(keys) - 1)
                        selected_key = keys[rand_keyi]
                        for ki in range(0, len(change_order)):
                            lookup_key = change_order[ki][1]
                            if selected_key == lookup_key:
                                selectAgain = True
                        if selectAgain:
                            break
                        else:
                            change_order.append([rand_indx, selected_key])
                            chang_indx[rand_indx] = chang_indx[rand_indx] - 1
                            break
                elif sum(chang_indx) == 0:
                    break
            return change_order

        def generateChangeSequence():
            return random.sample(range(1, 12), 8)

        def getGarageText(boolean):
            if boolean == 0:
                return "Garage Door\nClosed"
            elif boolean == 1:
                return "Garage Door\nOpen"
            else:
                ValueError("Garage door clutter value is not valid.")

        def getDateTimeText(value):
            """
            param day_shift: used for changing the day display on the panel for changing clutter
            condition. adding or subtracting int value from day of the month (13 +- day_shift )
            """

            # get current day for text display on calemdar widget
            my_date = date.today()
            today = datetime.now()
            month_index = datetime.now().month
            month = calendar.month_name[month_index]
            numeric_day = today.day # this is a integer
            if numeric_day + value <= 0 or numeric_day + value > 31:
                ValueError("Unacceptable day of the month after subtracting the clutter change value.")
            else:
                str_num_day = str(numeric_day + value)
                if str_num_day[-1] == '1':
                    day_suffix = 'st'
                elif str_num_day[-1] == '2':
                    day_suffix = 'nd'
                elif str_num_day[-1] == '3':
                    day_suffix = 'rd'
                elif int(str_num_day[-1]) >= 4:
                    day_suffix = 'th'

                return str_num_day + " " + month +"\n" + calendar.day_name[my_date.weekday()] # e.g. 'Wednesday'\nNumber

        def updateText(value, key):

            if key == "duration":
                return ('').join(["1 hr ", str(value), " min"])
            elif key == "fuel":
                return ('').join([str(value) , " mpg"])
            elif key == "distance":
                return ('').join([str(value) , " mi"])
            elif key == "date":
                return getDateTimeText(value)
            elif key == "garage_door":
                return getGarageText(value)
            elif key == "battery":
                return ('').join(["%", str(value)])
            elif key == "miles":
                return ('').join([str(value), "mi"])
            elif key == "temperature":
                return ('').join([str(value), "F"])
            else:
                KeyError('Widget was not found [', key,']')


        def getImageWithKeyword(directory, keyword):
            image_extensions = {'.png', '.jpg', '.jpeg', '.gif', '.bmp', '.tiff', '.webp'}

            for root, _, files in os.walk(directory):
                for file in files:
                    if any(file.lower().endswith(ext) for ext in image_extensions) and keyword.lower() in file.lower():
                        return "/".join([root, file])



        def getPositions(widget_regions, position_percentage):
            """ This function is used for obtaining axis coordinates for clutter placement

            :param clutter_region: (dict) enter the clutter's region dictionary obtained by clutter_separator (e.g. clutter[0] or clutter[target_clutter])

            :param position_percentages: (int) List of 2 integers indicating the placement in percentage of the clutter region size:
                     [25, 50] => [width * 25/100, height * 50/100]
            :return: point in coordinate system (x, y)
            """

            y_origin = widget_regions['y'] + (widget_regions['height']/2)
            x_origin = widget_regions['x'] - (widget_regions['width']/2)

            return [round(x_origin + widget_regions['width']*(position_percentage[0]/100)),
                    round(y_origin - widget_regions['height']*(position_percentage[1]/100))]


        def getIconSize(widget_regions, size_ratio):
            """ This function is used for obtaining axis coordinates for clutter placement

            :param widget_regions: (dict) enter the clutter's region dictionary obtained by clutter_separator (e.g. clutter[0] or clutter[target_clutter])

            :param size_ratio: (int) List of 2 integers indicating the ratio of icon size relative to the widget region's width
            :return: size in pixels (w, h)
            """
            return [round(widget_regions['width']*(size_ratio[0])),
                    round(widget_regions['width']*(size_ratio[1]))]

        if 'win' not in locals():
            from panel_generation_function import Panel
            class win:
                def __init__(self):
                    self.size = [1920, 1080]
            window = win()
            panel_layout = Panel(window.size[0], window.size[1])

        else:
            panel_layout = Panel(win.size[0], win.size[1])

        widget_regions = panel_layout.generate_panel_layout([1, 0, 0, 1])

        target_panel = 2
        large_region_indices = [0, 5]
        small_region_indices = [1, 2, 3, 4]
        if target_panel in large_region_indices:
            large_region_indices.remove(target_panel)
        elif target_panel in small_region_indices:
            small_region_indices.remove(target_panel)

        all_widgets = [
                        {"name": "trip_widget",
                        "possible_regions": large_region_indices,
                        "region_index": 0,
                        "text_components":
                            {"trip_header": {"text": "Current Trip", "position_percentage": [15, 10], "position_pixel": []},
                            "duration": {"text": "", "position_percentage": [35, 25], "position_pixel": []},
                            "fuel": {"text": "", "position_percentage": [35, 50], "position_pixel": []},
                            "distance": {"text": "", "position_percentage": [35, 75], "position_pixel": []}
                            },
                         "image_components":
                         {"duration": {"file":  getImageWithKeyword("./stimuli/clutter", "duration"),
                                       "position_percentage": [20, 25], "position_pixel": [],
                                       "size_ratio": [0.3125, 0.3125], "size_pixel": []},
                          "fuel": {"file":  getImageWithKeyword("./stimuli/clutter", "fuel"),
                                   "position_percentage": [20, 50], "position_pixel": [],
                                       "size_ratio": [0.3125, 0.3125], "size_pixel": []},
                          "distance": {"file":  getImageWithKeyword("./stimuli/clutter", "distance"),
                                       "position_percentage": [20, 75], "position_pixel": [],
                                       "size_ratio": [0.3125, 0.3125], "size_pixel": []}
                          },
                        },

                        {"name": "calendar_widget",
                         "possible_regions": large_region_indices,
                         "region_index": 5,
                         "text_components":
                            {"date": {"text": "", "position_percentage": [20, 15], "position_pixel": []}
                             },
                         "image_components":
                         {"calendar": {"file":  getImageWithKeyword("./stimuli/clutter", "calendar"),
                                       "position_percentage": [50 , 70], "position_pixel": [],
                                       "size_ratio": [0.8, 0.8], "size_pixel": []}
                          },
                        },

                        {"name": "garage_widget",
                         "possible_regions": small_region_indices,
                         "region_index": 1,
                         "text_components":
                            {"garage_header": {"text": "My Home", "position_percentage": [15, 20], "position_pixel": []},
                             "garage_door": {"text": "", "position_percentage": [35, 50], "position_pixel": []}
                             },
                         "image_components":
                         {"garage": {"file":  getImageWithKeyword("./stimuli/clutter", "garage"),
                                     "position_percentage": [20, 50], "position_pixel": [],
                                       "size_ratio": [0.35, 0.35], "size_pixel": []}
                          },
                        },

                        {"name": "temperature_widget",
                        "possible_regions": small_region_indices,
                         "region_index": 3,
                         "text_components":
                            {"temperature": {"text": "", "position_percentage": [30, 40], "position_pixel": []}
                             },
                         "image_components":
                         {"temperature": {"file":  getImageWithKeyword("./stimuli/clutter", "temperature"),
                                          "position_percentage": [50, 50], "position_pixel": [],
                                       "size_ratio": [0.8, 0.8], "size_pixel": []}
                          },
                        },

                        {"name": "battery_widget",
                         "possible_regions": small_region_indices,
                         "region_index": 4,
                         "text_components":
                            {"battery": {"text": "", "position_percentage": [21, 45], "position_pixel": []},
                             "miles": {"text": "", "position_percentage": [55, 63], "position_pixel": []}
                             },
                         "image_components":
                         {"battery": {"file":  getImageWithKeyword("./stimuli/clutter", "battery"),
                                          "position_percentage": [50, 50], "position_pixel": [],
                                       "size_ratio": [0.8, 0.8], "size_pixel": []}
                          },
                        }
                ]

        dynamic_clutter_values = [{"duration": 28, "fuel": 34, "distance": 78},
                                  {"date": 0},
                                  {"garage_door": 0},
                                  {"temperature": 96},
                                  {"battery": 24, "miles": 76}]
        # 12 trials, 8 total widgets, how many clutter change?
        # 8?

        # select 1 index, che


        # TODO: function to change order of elements in each data strct. to do what?
        all_data_structures = [all_widgets, dynamic_clutter_values]

        for index in range(0, len(all_widgets)):
            curr_dyn_clutter = dynamic_clutter_values[index]
            for key, val in curr_dyn_clutter.items():
                all_widgets[index]["text_components"][key]["text"] = updateText(val, key)

        for index in range(0, len(all_widgets)):
            curr_text_comps = all_widgets[index]["text_components"]
            widget_index = all_widgets[index]["region_index"]
            for key, val in curr_text_comps.items():
                all_widgets[index]["text_components"][key]["position_pixel"] = getPositions(widget_regions[widget_index], val["position_percentage"])

            curr_img_comps = all_widgets[index]["image_components"]
            for key, val in curr_img_comps.items():
                all_widgets[index]["image_components"][key]["position_pixel"] = getPositions(widget_regions[widget_index], val["position_percentage"])
                all_widgets[index]["image_components"][key]["size_pixel"] = getIconSize(widget_regions[widget_index], val["size_ratio"])


        # letter size is dependent on the large panel's height
        letter_size = widget_regions[1]["height"] * 0.2
        day_size = widget_regions[1]["width"] * 0.125
        header_size = widget_regions[1]["width"]  * 0.1
        temperature_size = widget_regions[1]["width"]  * 0.14
        battery_size = widget_regions[1]["width"] * 0.085

        textFont = "./stimuli/font/robotoflex.ttf"

        text_size = widget_regions[1]["width"]/12
        header_wrap_width = 500
  Routine screen_display_images
    CodeComponent estimate_frame_durations_2
      Code Type = Py
      Begin Experiment:
        exp_clock = core.Clock()
      Begin Routine:
        t_start_time = exp_clock.getTime()
        t_frame_time = []
        thisExp.addData('elapsed_time', exp_clock.getTime() - exp_start_time);
        thisExp.addData('current_time', datetime.now().strftime("%H:%M:%S"));

        if trials.thisN == 0:
            stim_duration = 0.1
            dummy_panel_size = [panel_layout.panel_x_size, panel_layout.panel_y_size]
        else:
            stim_duration = 99
            dummy_panel_size = [1, 1]
        print('is it working first')

        if enableSound == 'yes':
            soundVolume = 1
            soundDuration = 0.5
            stim_offset = 0.15
        elif enableSound == 'no':
            soundVolume = 0
            soundDuration = 0.01
            stim_offset = 0
        else:
            raise ValueError('Sound condition is not defined properly, type in yes or no in the blocks file')

        if staircaseEnabled:
            stimulus_duration = staircase_dict[current_font].testLevel
        elif enableSound == "yes":
            stimulus_duration = 5
        else:
            stimulus_duration = 0.5


        print('trial print: ', current_font)
      Each Frame:
        t_frame_time.append(round((exp_clock.getTime() - t_start_time)*1000,2))

        t_start_time = exp_clock.getTime()
      End Routine:
        thisExp.addData('trial_frame_durations', t_frame_time);
        thisExp.addData('stimulus_duration', stimulus_duration);

        if staircaseEnabled:
            thisExp.addData('st_font', current_font);
            thisExp.addData('st_is_reversal', (staircase_dict[current_font].selfSign * staircase_dict[current_font].lastSign) == -1);
            thisExp.addData('st_cumulative_reversals', staircase_dict[current_font].nReversals);
            thisExp.addData('st_trial_number', staircase_dict[current_font].nPresented + 1);
            thisExp.addData('st_nDown', staircase_dict[current_font].nDown);
            thisExp.addData('st_stepSize', staircase_dict[current_font].stepSize);
            staircase_dict[current_font].update(lexical_response.corr)
        else:
            thisExp.addData('st_font', None);
            thisExp.addData('st_is_reversal', None);
            thisExp.addData('st_cumulative_reversals', None);
            thisExp.addData('st_trial_number', None);
            thisExp.addData('st_nDown', None);
            thisExp.addData('st_stepSize', None);
    ImageComponent background_panel
      image = stimuli/panels/background_panel.png
      pos [set every repeat] = panel_layout.panel_position
      size [set every repeat] = (panel_layout.panel_x_size, panel_layout.panel_y_size)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stim_duration
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    ImageComponent panel1
      image = stimuli/panels/large_panel.png
      pos [set every repeat] = (widget_regions[0]['x'], widget_regions[0]['y'])
      size [set every repeat] = (widget_regions[0]['width'], widget_regions[0]['height'])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stim_duration
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    ImageComponent panel2
      image = stimuli/panels/small_panel.png
      pos [set every repeat] = (widget_regions[1]['x'], widget_regions[1]['y'])
      size [set every repeat] = (widget_regions[1]['width'], widget_regions[1]['height'])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stim_duration
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    ImageComponent panel3
      image = stimuli/panels/small_panel.png
      pos [set every repeat] = (widget_regions[2]['x'], widget_regions[2]['y'])
      size [set every repeat] = (widget_regions[2]['width'], widget_regions[2]['height'])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stim_duration
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    ImageComponent panel4
      image = stimuli/panels/small_panel.png
      pos [set every repeat] = (widget_regions[3]['x'], widget_regions[3]['y'])
      size [set every repeat] = (widget_regions[3]['width'], widget_regions[3]['height'])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stim_duration
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    ImageComponent panel5
      image = stimuli/panels/small_panel.png
      pos [set every repeat] = (widget_regions[4]['x'], widget_regions[4]['y'])
      size [set every repeat] = (widget_regions[4]['width'], widget_regions[4]['height'])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stim_duration
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    ImageComponent panel6
      image = stimuli/panels/large_panel.png
      pos [set every repeat] = (widget_regions[5]['x'], widget_regions[5]['y'])
      size [set every repeat] = (widget_regions[5]['width'], widget_regions[5]['height'])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stim_duration
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    TextComponent lexical_text_2
      color = black
      font [set every repeat] = Georgia
      letterHeight [set every repeat] = letter_size
      pos [set every repeat] = (widget_regions[target_panel]['x'], widget_regions[target_panel]['y'])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stim_duration
      text [set every repeat] = $text
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    ImageComponent widget1_symbol1
      image [set every repeat] = $all_widgets[0]["image_components"]["duration"]["file"]
      pos [set every repeat] = correctPositionSmall(all_widgets[0]["image_components"]["duration"]["size_pixel"], all_widgets[0]["image_components"]["duration"]["position_pixel"])
      size [set every repeat] = $all_widgets[0]["image_components"]["duration"]["size_pixel"]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stim_duration
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    ImageComponent widget1_symbol2
      image [set every repeat] = $all_widgets[0]["image_components"]["fuel"]["file"]
      pos [set every repeat] = correctPositionSmall(all_widgets[0]["image_components"]["fuel"]["size_pixel"], all_widgets[0]["image_components"]["fuel"]["position_pixel"])
      size [set every repeat] = all_widgets[0]["image_components"]["fuel"]["size_pixel"]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stim_duration
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    ImageComponent widget1_symbol3
      image [set every repeat] = $all_widgets[0]["image_components"]["distance"]["file"]
      pos [set every repeat] = correctPositionSmall(all_widgets[0]["image_components"]["distance"]["size_pixel"], all_widgets[0]["image_components"]["distance"]["position_pixel"])
      size [set every repeat] = all_widgets[0]["image_components"]["distance"]["size_pixel"]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stim_duration
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    TextComponent widget1_text1
      color = black
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = text_size
      pos [set every repeat] = correctTextPosition(widget1_text1, all_widgets[0]["text_components"]["duration"]["position_pixel"])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stim_duration
      text [set every repeat] = $all_widgets[0]["text_components"]["duration"]["text"]
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    TextComponent widget1_text2
      color = black
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = text_size
      pos [set every repeat] = correctTextPosition(widget1_text2, all_widgets[0]["text_components"]["fuel"]["position_pixel"])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stim_duration
      text [set every repeat] = $all_widgets[0]["text_components"]["fuel"]["text"]
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    TextComponent widget1_text3
      color = black
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = text_size
      pos [set every repeat] = correctTextPosition(widget1_text3, all_widgets[0]["text_components"]["distance"]["position_pixel"])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stim_duration
      text [set every repeat] = $all_widgets[0]["text_components"]["distance"]["text"]
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    TextComponent widget1_text4
      color = black
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = header_size
      pos [set every repeat] = correctTextPosition(widget1_text4, all_widgets[0]["text_components"]["trip_header"]["position_pixel"])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stim_duration
      text [set every repeat] = $all_widgets[0]["text_components"]["trip_header"]["text"]
      wrapWidth = header_wrap_width
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    ImageComponent widget2_symbol1
      image [set every repeat] = $all_widgets[2]["image_components"]["garage"]["file"]
      pos [set every repeat] = correctPositionSmall(all_widgets[2]["image_components"]["garage"]["size_pixel"], all_widgets[2]["image_components"]["garage"]["position_pixel"])
      size [set every repeat] = all_widgets[2]["image_components"]["garage"]["size_pixel"]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stim_duration
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    TextComponent widget2_text1
      color = black
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = header_size
      pos [set every repeat] = correctTextPosition(widget2_text1, all_widgets[2]["text_components"]["garage_header"]["position_pixel"])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stim_duration
      text [set every repeat] = $all_widgets[2]["text_components"]["garage_header"]["text"]
      wrapWidth = header_wrap_width
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    TextComponent widget2_text2
      color = black
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = text_size
      pos [set every repeat] = correctTextPosition(widget2_text2, all_widgets[2]["text_components"]["garage_door"]["position_pixel"])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stim_duration
      text [set every repeat] = $all_widgets[2]["text_components"]["garage_door"]["text"]
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    ImageComponent widget3_symbol1
      image [set every repeat] = $all_widgets[3]["image_components"]["temperature"]["file"]
      pos [set every repeat] = correctPositionSmall(all_widgets[3]["image_components"]["temperature"]["size_pixel"], all_widgets[3]["image_components"]["temperature"]["position_pixel"])
      size [set every repeat] = all_widgets[3]["image_components"]["temperature"]["size_pixel"]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stim_duration
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    TextComponent widget3_text1
      color = black
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = temperature_size
      pos [set every repeat] = correctTextPosition(widget3_text1, all_widgets[3]["text_components"]["temperature"]["position_pixel"])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stim_duration
      text [set every repeat] = $all_widgets[3]["text_components"]["temperature"]["text"]
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    ImageComponent widget4_symbol1
      image [set every repeat] = $all_widgets[4]["image_components"]["battery"]["file"]
      pos [set every repeat] = correctPositionSmall(all_widgets[4]["image_components"]["battery"]["size_pixel"], all_widgets[4]["image_components"]["battery"]["position_pixel"])
      size [set every repeat] = all_widgets[4]["image_components"]["battery"]["size_pixel"]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stim_duration
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    TextComponent widget4_text1
      color = black
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = battery_size
      pos [set every repeat] = correctTextPosition(widget4_text1, all_widgets[4]["text_components"]["battery"]["position_pixel"])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stim_duration
      text [set every repeat] = $all_widgets[4]["text_components"]["battery"]["text"]
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    TextComponent widget4_text2
      color = black
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = battery_size
      pos [set every repeat] = correctTextPosition(widget4_text1, all_widgets[4]["text_components"]["miles"]["position_pixel"])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stim_duration
      text [set every repeat] = $all_widgets[4]["text_components"]["miles"]["text"]
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    TextComponent widget5_text1
      color = black
      flip [set every repeat] = None
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = day_size
      ori [set every repeat] = 0
      pos [set every repeat] = correctTextPosition(widget5_text1, all_widgets[1]["text_components"]["date"]["position_pixel"])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stim_duration
      text [set every repeat] = $all_widgets[1]["text_components"]["date"]["text"]
      wrapWidth = header_wrap_width
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    ImageComponent widget5_symbol1
      image [set every repeat] = $all_widgets[1]["image_components"]["calendar"]["file"]
      pos [set every repeat] = correctPositionSmall(all_widgets[1]["image_components"]["calendar"]["size_pixel"], all_widgets[1]["image_components"]["calendar"]["position_pixel"])
      size [set every repeat] = all_widgets[1]["image_components"]["calendar"]["size_pixel"]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stim_duration
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    KeyboardComponent keybaord_input_2
      allowedKeys = 'y','n'
      correctAns = $correct_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stim_duration
      storeCorrect = True
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    CodeComponent align_text
      Code Type = Py
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      Begin Routine:
        alignment_var = "left"

        #
        #widget1_text1.alignText = alignment_var
        #widget1_text2.alignText = alignment_var
        #widget1_text3.alignText = alignment_var
        #widget1_text4.alignText = alignment_var
        #
        #widget2_text1.alignText = alignment_var
        #widget2_text2.alignText = alignment_var
        #
        #widget5_text1.alignText = alignment_var


        widget1_text4.bold = True
        widget2_text1.bold = True
        widget3_text1.bold = True
        widget4_text1.bold = True
        widget4_text2.bold = True
        widget5_text1.bold = True
    ImageComponent background_panel_3
      image = stimuli/panels/background_panel.png
      pos [set every repeat] = panel_layout.panel_position
      size [set every repeat] = dummy_panel_size
      startVal [time (s)] = 0
      stopVal [duration (s)] = $stim_duration
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  Routine routine_1
  Routine inter_trial_interval
    CodeComponent estimate_frame_durations
      Code Type = Py
      Begin Routine:
        t_start_time = exp_clock.getTime()
        t_frame_time = []


        if trials.thisN == 0:
            iti_duration = 0.1
            dummy_panel_size = [panel_layout.panel_x_size, panel_layout.panel_y_size]
        else:
            iti_duration = random.randint(1000,3000)/1000 # duration in msec units
            print(iti_duration)
            dummy_panel_size = [1, 1]

        print('is it working second')
      Each Frame:
        t_frame_time.append(round((exp_clock.getTime() - t_start_time)*1000,2))

        t_start_time = exp_clock.getTime()
      End Routine:
        thisExp.addData('trial_frame_durations', t_frame_time);

        print('is it working second end routine')
    ImageComponent background_panel_2
      image = stimuli/panels/background_panel.png
      pos [set every repeat] = panel_layout.panel_position
      size [set every repeat] = (panel_layout.panel_x_size, panel_layout.panel_y_size)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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    ImageComponent panel1_2
      image = stimuli/panels/large_panel.png
      pos [set every repeat] = (widget_regions[0]['x'], widget_regions[0]['y'])
      size [set every repeat] = (widget_regions[0]['width'], widget_regions[0]['height'])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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    ImageComponent panel2_2
      image = stimuli/panels/small_panel.png
      pos [set every repeat] = (widget_regions[1]['x'], widget_regions[1]['y'])
      size [set every repeat] = (widget_regions[1]['width'], widget_regions[1]['height'])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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    ImageComponent panel3_2
      image = stimuli/panels/small_panel.png
      pos [set every repeat] = (widget_regions[2]['x'], widget_regions[2]['y'])
      size [set every repeat] = (widget_regions[2]['width'], widget_regions[2]['height'])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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    ImageComponent panel4_2
      image = stimuli/panels/small_panel.png
      pos [set every repeat] = (widget_regions[3]['x'], widget_regions[3]['y'])
      size [set every repeat] = (widget_regions[3]['width'], widget_regions[3]['height'])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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    ImageComponent panel5_2
      image = stimuli/panels/small_panel.png
      pos [set every repeat] = (widget_regions[4]['x'], widget_regions[4]['y'])
      size [set every repeat] = (widget_regions[4]['width'], widget_regions[4]['height'])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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    ImageComponent panel6_2
      image = stimuli/panels/large_panel.png
      pos [set every repeat] = (widget_regions[5]['x'], widget_regions[5]['y'])
      size [set every repeat] = (widget_regions[5]['width'], widget_regions[5]['height'])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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    ImageComponent widget1_symbol1_2
      image [set every repeat] = $all_widgets[0]["image_components"]["duration"]["file"]
      pos [set every repeat] = correctPositionSmall(all_widgets[0]["image_components"]["duration"]["size_pixel"], all_widgets[0]["image_components"]["duration"]["position_pixel"])
      size [set every repeat] = $all_widgets[0]["image_components"]["duration"]["size_pixel"]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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    ImageComponent widget1_symbol2_2
      image [set every repeat] = $all_widgets[0]["image_components"]["fuel"]["file"]
      pos [set every repeat] = correctPositionSmall(all_widgets[0]["image_components"]["fuel"]["size_pixel"], all_widgets[0]["image_components"]["fuel"]["position_pixel"])
      size [set every repeat] = all_widgets[0]["image_components"]["fuel"]["size_pixel"]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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    ImageComponent widget1_symbol3_2
      image [set every repeat] = $all_widgets[0]["image_components"]["distance"]["file"]
      pos [set every repeat] = correctPositionSmall(all_widgets[0]["image_components"]["distance"]["size_pixel"], all_widgets[0]["image_components"]["distance"]["position_pixel"])
      size [set every repeat] = all_widgets[0]["image_components"]["distance"]["size_pixel"]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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    TextComponent widget1_text1_2
      color = black
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = text_size
      pos [set every repeat] = correctTextPosition(widget1_text1, all_widgets[0]["text_components"]["duration"]["position_pixel"])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
      text [set every repeat] = $all_widgets[0]["text_components"]["duration"]["text"]
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    TextComponent widget1_text2_2
      color = black
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = text_size
      pos [set every repeat] = correctTextPosition(widget1_text2, all_widgets[0]["text_components"]["fuel"]["position_pixel"])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
      text [set every repeat] = $all_widgets[0]["text_components"]["fuel"]["text"]
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    TextComponent widget1_text3_2
      color = black
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = text_size
      pos [set every repeat] = correctTextPosition(widget1_text3, all_widgets[0]["text_components"]["distance"]["position_pixel"])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
      text [set every repeat] = $all_widgets[0]["text_components"]["distance"]["text"]
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    TextComponent widget1_text4_2
      color = black
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = header_size
      pos [set every repeat] = correctTextPosition(widget1_text4, all_widgets[0]["text_components"]["trip_header"]["position_pixel"])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
      text [set every repeat] = $all_widgets[0]["text_components"]["trip_header"]["text"]
      wrapWidth = header_wrap_width
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    ImageComponent widget2_symbol1_2
      image [set every repeat] = $all_widgets[2]["image_components"]["garage"]["file"]
      pos [set every repeat] = correctPositionSmall(all_widgets[2]["image_components"]["garage"]["size_pixel"], all_widgets[2]["image_components"]["garage"]["position_pixel"])
      size [set every repeat] = all_widgets[2]["image_components"]["garage"]["size_pixel"]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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    TextComponent widget2_text1_2
      color = black
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = header_size
      pos [set every repeat] = correctTextPosition(widget2_text1, all_widgets[2]["text_components"]["garage_header"]["position_pixel"])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
      text [set every repeat] = $all_widgets[2]["text_components"]["garage_header"]["text"]
      wrapWidth = header_wrap_width
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    TextComponent widget2_text2_2
      color = black
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = text_size
      pos [set every repeat] = correctTextPosition(widget2_text2, all_widgets[2]["text_components"]["garage_door"]["position_pixel"])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
      text [set every repeat] = $all_widgets[2]["text_components"]["garage_door"]["text"]
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    ImageComponent widget3_symbol1_2
      image [set every repeat] = $all_widgets[3]["image_components"]["temperature"]["file"]
      pos [set every repeat] = correctPositionSmall(all_widgets[3]["image_components"]["temperature"]["size_pixel"], all_widgets[3]["image_components"]["temperature"]["position_pixel"])
      size [set every repeat] = all_widgets[3]["image_components"]["temperature"]["size_pixel"]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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    TextComponent widget3_text1_2
      color = black
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = temperature_size
      pos [set every repeat] = correctTextPosition(widget3_text1, all_widgets[3]["text_components"]["temperature"]["position_pixel"])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
      text [set every repeat] = $all_widgets[3]["text_components"]["temperature"]["text"]
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    ImageComponent widget4_symbol1_2
      image [set every repeat] = $all_widgets[4]["image_components"]["battery"]["file"]
      pos [set every repeat] = correctPositionSmall(all_widgets[4]["image_components"]["battery"]["size_pixel"], all_widgets[4]["image_components"]["battery"]["position_pixel"])
      size [set every repeat] = all_widgets[4]["image_components"]["battery"]["size_pixel"]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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    TextComponent widget4_text1_2
      color = black
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = battery_size
      pos [set every repeat] = correctTextPosition(widget4_text1, all_widgets[4]["text_components"]["battery"]["position_pixel"])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
      text [set every repeat] = $all_widgets[4]["text_components"]["battery"]["text"]
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    TextComponent widget4_text2_2
      color = black
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = battery_size
      pos [set every repeat] = correctTextPosition(widget4_text1, all_widgets[4]["text_components"]["miles"]["position_pixel"])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
      text [set every repeat] = $all_widgets[4]["text_components"]["miles"]["text"]
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    TextComponent widget5_text1_2
      color = black
      flip [set every repeat] = None
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = day_size
      ori [set every repeat] = 0
      pos [set every repeat] = correctTextPosition(widget5_text1, all_widgets[1]["text_components"]["date"]["position_pixel"])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
      text [set every repeat] = $all_widgets[1]["text_components"]["date"]["text"]
      wrapWidth = header_wrap_width
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    ImageComponent widget5_symbol1_2
      image [set every repeat] = $all_widgets[1]["image_components"]["calendar"]["file"]
      pos [set every repeat] = correctPositionSmall(all_widgets[1]["image_components"]["calendar"]["size_pixel"], all_widgets[1]["image_components"]["calendar"]["position_pixel"])
      size [set every repeat] = all_widgets[1]["image_components"]["calendar"]["size_pixel"]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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    CodeComponent align_text_2
      Code Type = Py
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      Begin Routine:
        alignment_var = "left"

        #
        #widget1_text1.alignText = alignment_var
        #widget1_text2.alignText = alignment_var
        #widget1_text3.alignText = alignment_var
        #widget1_text4.alignText = alignment_var
        #
        #widget2_text1.alignText = alignment_var
        #widget2_text2.alignText = alignment_var
        #
        #widget5_text1.alignText = alignment_var


        widget1_text4.bold = True
        widget2_text1.bold = True
        widget3_text1.bold = True
        #widget4_text1.bold = True
        #widget4_text2.bold = True
        widget5_text1.bold = True
    ImageComponent background_panel_4
      image = stimuli/panels/background_panel.png
      pos [set every repeat] = panel_layout.panel_position
      size [set every repeat] = dummy_panel_size
      startVal [time (s)] = 0
      stopVal [duration (s)] = $iti_duration
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    CodeComponent text_align
      Code Type = Auto->JS
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      Begin Routine:
        alignment_var = "left"

        #
        #widget1_text1_2.alignText = alignment_var
        #widget1_text2_2.alignText = alignment_var
        #widget1_text3_2.alignText = alignment_var
        #widget1_text4_2.alignText = alignment_var
        #
        #widget2_text1_2.alignText = alignment_var
        #widget2_text2_2.alignText = alignment_var
        #
        #widget5_text1_2.alignText = alignment_var

        widget1_text4_2.bold = True
        widget2_text1_2.bold = True
        widget3_text1_2.bold = True
        widget4_text1_2.bold = True
        widget4_text2_2.bold = True
        widget5_text1_2.bold = True
  Routine get_trials
    CodeComponent extract_trials
      Code Type = Py
      Begin Experiment:
        all_word_trials = range(0, 761)
        all_nonword_trials = range(764, 1261)


        maxword_no = 760
        maxnonword_no = 1260



        staircase_dict = {}
      Begin Routine:
        current_WORD_trials = trial_sampling(all_word_trials, word_trial_count)
        current_NONWORD_trials = trial_sampling(all_nonword_trials, nonword_trial_count)

        all_word_trials = remove_elements(all_word_trials, current_WORD_trials)
        all_nonword_trials = remove_elements(all_nonword_trials, current_NONWORD_trials)

        current_trials = join_and_shuffle(current_WORD_trials, current_NONWORD_trials)

        print('block print: ', current_font)

        if blocks.thisN == 2 or blocks.thisN == 5:
            continueRoutine = False
            instructionDuration = 0.01
        else:
            instructionDuration = 999

        instr_y = win.size[1] * 2/3
        instr_x = instr_y * wh_ratio

        staircaseEnabled = task_name == "lexical_wo_driving_roboto" or task_name == "lexical_wo_driving_neuefrutigerworld"

        if "full_task" in task_name:
            clutterChangeTrials = generateChangeSequence()
            if "training" in task_name:
                chang_indx = [1, 1, 1, 1, 1]
            else:
                chang_indx = [3, 1, 1, 1, 2]
            clutterChangeOrder = getChangeIndex(dynamic_clutter_values, chang_indx)
            pass

        if staircaseEnabled:
            trialsPerStaircase = 80
            start_duration = 0.300
            staircase_dict[current_font] = staircaseFunction(trialsPerStaircase, trialsPerStaircase, start_duration, 1, 1)
      End Routine:
        if blocks.thisN == 0:
            exp_start_time = exp_clock.getTime()
    ImageComponent background_panel_5
      image = stimuli/panels/background_panel.png
      pos [set every repeat] = panel_layout.panel_position
      size [set every repeat] = (panel_layout.panel_x_size, panel_layout.panel_y_size)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $instructionDuration
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $instructionDuration
      store = nothing
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    ImageComponent instruction_image
      image [set every repeat] = $instruction_image_file
      pos = (0, win.size[1]/6)
      size [set every repeat] = (instr_x, instr_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $instructionDuration
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  Routine finish_instructions
    ImageComponent background_panel_6
      image = stimuli/panels/background_panel.png
      pos [set every repeat] = panel_layout.panel_position
      size [set every repeat] = (panel_layout.panel_x_size, panel_layout.panel_y_size)
      startVal [time (s)] = 0.0
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    TextComponent finish_text
      color = black
      letterHeight = 50
      startVal [time (s)] = 0.0
      text = Experiment is finished, thank you!
      wrapWidth = 1000
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    KeyboardComponent finish_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine initialization
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = blocks_pilot.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'current_font': 'Georgia', 'task_name': 'training_lexical', 'iti_min': 1, 'iti_max': 1, 'word_trial_count': 20, 'nonword_trial_count': 20, 'enableSound': 'no', 'instruction_image_file': './instructions_pilot/lexical_training.png', 'wh_ratio': 1.77, 'xheight_to_size': 2.07},
      {'current_font': 'RobotoFlex', 'task_name': 'lexical_wo_driving_roboto', 'iti_min': 1, 'iti_max': 1, 'word_trial_count': 40, 'nonword_trial_count': 40, 'enableSound': 'no', 'instruction_image_file': './instructions_pilot/lexical_task.png', 'wh_ratio': 1.77, 'xheight_to_size': 1.9825},
      {'current_font': 'Neue Frutiger World', 'task_name': 'lexical_wo_driving_neuefrutigerworld', 'iti_min': 1, 'iti_max': 1, 'word_trial_count': 40, 'nonword_trial_count': 40, 'enableSound': 'no', 'instruction_image_file': './instructions_pilot/lexical_task.png', 'wh_ratio': 1.77, 'xheight_to_size': 1.96},
      {'current_font': 'Georgia', 'task_name': 'training_driving_lexical', 'iti_min': 15, 'iti_max': 25, 'word_trial_count': 4, 'nonword_trial_count': 4, 'enableSound': 'yes', 'instruction_image_file': './instructions_pilot/driving_lexical_training.png', 'wh_ratio': 1.77, 'xheight_to_size': 2.07},
      {'current_font': 'RobotoFlex', 'task_name': 'full_task_roboto', 'iti_min': 15, 'iti_max': 25, 'word_trial_count': 6, 'nonword_trial_count': 6, 'enableSound': 'yes', 'instruction_image_file': './instructions_pilot/full_task.png', 'wh_ratio': 1.77, 'xheight_to_size': 1.9825}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
    Routine get_trials
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = stimulus_sheet.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'text': 'accent', 'wordNonword': 'w', 'currentFont': 'Arial'},
        {'text': 'aching', 'wordNonword': 'w', 'currentFont': 'Arial'},
        {'text': 'adding', 'wordNonword': 'w', 'currentFont': 'Arial'},
        {'text': 'advent', 'wordNonword': 'w', 'currentFont': 'Arial'},
        {'text': 'advise', 'wordNonword': 'w', 'currentFont': 'Arial'},
        {'text': 'affect', 'wordNonword': 'w', 'currentFont': 'Arial'},
        {'text': 'agrees', 'wordNonword': 'w', 'currentFont': 'Arial'},
        {'text': 'aiming', 'wordNonword': 'w', 'currentFont': 'Arial'},
        {'text': 'alight', 'wordNonword': 'w', 'currentFont': 'Arial'},
        {'text': 'allied', 'wordNonword': 'w', 'currentFont': 'Arial'},
        {'text': 'allows', 'wordNonword': 'w', 'currentFont': 'Arial'},
        {'text': 'amazed', 'wordNonword': 'w', 'currentFont': 'Arial'},
        {'text': 'angels', 'wordNonword': 'w', 'currentFont': 'Arial'},
        {'text': 'angles', 'wordNonword': 'w', 'currentFont': 'Arial'},
        {'text': 'annual', 'wordNonword': 'w', 'currentFont': 'Arial'},
        {'text': 'appear', 'wordNonword': 'w', 'currentFont': 'Arial'},
        {'text': 'archer', 'wordNonword': 'w', 'currentFont': 'Arial'},
        {'text': 'ardent', 'wordNonword': 'w', 'currentFont': 'Arial'},
        {'text': 'argues', 'wordNonword': 'w', 'currentFont': 'Arial'},
        {'text': 'arises', 'wordNonword': 'w', 'currentFont': 'Arial'},
        {'text': 'arouse', 'wordNonword': 'w', 'currentFont': 'Arial'},
        {'text': 'assert', 'wordNonword': 'w', 'currentFont': 'Arial'},
        {'text': 'assets', 'wordNonword': 'w', 'currentFont': 'Arial'},
        {'text': 'assure', 'wordNonword': 'w', 'currentFont': 'Arial'}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
      Routine screen_display_images
      Routine inter_trial_interval
    LoopTerminator trials
  LoopTerminator blocks
  Routine finish_instructions
