PsychoPy2experiment version="2022.2.3"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'cb_group': '1', 'system': 'mert'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1536, 864]
  color = -1.0000, -1.0000, -1.0000
  expName = no_clutter
  keyboardBackend = ioHub
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Routines
  Routine initialization
    CodeComponent function_definitions
      Code Type = Py
      Begin Experiment:
        from pprint import pprint
        import calendar
        import json
        import math
        import random
        from datetime import date
        from datetime import datetime
        import os
        from staircasing import staircaseFunction
        from masking import getFilesInDir, selectRandomMask

        def getFrames(duration, secPerFrame):
            return round(duration / secPerFrame)


        def trial_sampling(vector, n):
            if n > len(vector):
                raise ValueError("n cannot be greater than the length of the vector.")

            return random.sample(vector, n)

        def join_and_shuffle(vector1, vector2):
            combined = vector1 + vector2
            random.shuffle(combined)
            return combined

        def remove_elements(source_vector, elements_to_remove):
            result = [x for x in source_vector if x not in elements_to_remove]
            return result


        def getDateTimeText():
            # get current day for text display on calemdar widget
            my_date = date.today()
            today = datetime.now()
            month_index = datetime.now().month
            month = calendar.month_name[month_index]
            numeric_day = today.day # this is a integer
            str_num_day = str(numeric_day)
            if str_num_day[-1] == '1':
                day_suffix = 'st'
            elif str_num_day[-1] == '2':
                day_suffix = 'nd'
            elif str_num_day[-1] == '3':
                day_suffix = 'rd'
            elif int(str_num_day[-1]) >= 4:
                day_suffix = 'th'

            return str_num_day + day_suffix + " " + month +"\n" + calendar.day_name[my_date.weekday()] # e.g. 'Wednesday'\nNumber


        def getImageWithKeyword(directory, keyword):
            image_extensions = {'.png', '.jpg', '.jpeg', '.gif', '.bmp', '.tiff', '.webp'}

            for root, _, files in os.walk(directory):
                for file in files:
                    if any(file.lower().endswith(ext) for ext in image_extensions) and keyword.lower() in file.lower():
                        return "/".join([root, file])

        def correctTextPosition(text_stim, text_position):
            if hasattr(text_stim, 'boundingBox'):
                print('HERE IS THE BOUNDING BOX ', text_stim.boundingBox)
                return [text_position[0] + text_stim.boundingBox[0]/2, text_position[1]]
            else:
                return text_position

        def correctPosition(icon_size, icon_position):
            return icon_position
        #    return [icon_position[0] - icon_size[0]/2,
        #    icon_position[1] - icon_size[1]/2] # math.copysign(icon_size[0], icon_position[0])/2, math.copysign(icon_size[1], icon_position[1])/2]
        #

        def correctPositionSmall(icon_size, icon_position):
            return icon_position
        #    return [icon_position[0] + icon_size[0]/2, icon_position[1]]
    CodeComponent panel_initialization
      Code Type = Py
      Begin Experiment:
        # Example usage:
        class Panel:
            def __init__(self, x, y):
                self.x = x
                self.y = y
                self.column_spacing = 0.03
                self.row_spacing = 0.03
                self.scale_ratios = [1, 2/3]
                self.scale_empty_part = "bottom"
                self.panel_x_size = round(x * self.scale_ratios[0])
                self.panel_y_size = round(y * self.scale_ratios[1])
                self.panel_position = self.estimate_panel_position()

            def estimate_panel_position(self):

                if self.scale_empty_part == "top":
                    y_axis_shift = -1
                elif self.scale_empty_part == "bottom":
                    y_axis_shift = 1
                else:
                    y_axis_shift = 0

                if self.scale_empty_part == "left":
                    x_axis_shift = 1
                elif self.scale_empty_part == "right":
                    x_axis_shift = -1
                else:
                    x_axis_shift = 0

                return [round(0.5 * x_axis_shift * (self.x * (1 - self.scale_ratios[0]))),
                            round(0.5 * y_axis_shift * (self.y * (1 - self.scale_ratios[1])))]

            def generate_panel_layout(self, config):
                """
                Generates panel regions based on input config list.
                :param config: list of 4 integers, each 0 or 1
                               1 = single full-height panel in the column
                               0 = two half-height panels in the column
                :param win: object with win.x and win.y for screen width and height
                :return: list of panel region dictionaries with x, y, width, height
                """
                assert len(config) == 4, "Config must have exactly 4 elements (one per column)"
                assert all(c in (0, 1) for c in config), "Each config entry must be 0 or 1"

                window_origin_x = -self.x / 2
                window_origin_y = self.y / 2

                if self.scale_empty_part == "top":
                    window_origin_y = window_origin_y - self.panel_y_size / 2

                panel_width = self.panel_x_size
                panel_height = self.panel_y_size
                col_spacing_ratio = self.column_spacing
                row_spacing_ratio = self.row_spacing
                num_col_spacings = 5  # 3 between + 2 sides
                col_spacing = panel_width * col_spacing_ratio
                row_spacing = panel_height * row_spacing_ratio
                region_width = (panel_width - (col_spacing * num_col_spacings)) / 4
                regions = []

                for col in range(4):
                    x = window_origin_x + col_spacing * (col + 1) + region_width * col + region_width / 2
                    if config[col] == 1:
                        # Single full-height panel (minus top & bottom spacing)
                        height = panel_height - 2*row_spacing
                        y = window_origin_y - row_spacing - height / 2
                        regions.append({
                            "x": int(x),
                            "y": int(y),
                            "width": int(region_width),
                            "height": int(height)
                        })
                    else:
                        # Two half-height panels
                        height = (panel_height - 3 * row_spacing) / 2
                        for row in range(2):
                            y = window_origin_y - (row_spacing * (row + 1) + height * row) - height / 2
                            regions.append({
                                "x": int(x),
                                "y": int(y),
                                "width": int(region_width),
                                "height": int(height)
                            })

                return regions

            def panel_separator(self, panel, separation_count, separation_direction):
                """ This function is used for separating individual panels into regions.
                Purpose is to add clutter based on these regions.

                :param panel: (dict) enter the panel's dictionary (e.g. r[0] or r[target_panel])
                :param separation_count: (int) how many panels you want it to be separated into
                :param separation_direction: (str) direction of separation "vertical" or "horizontal"

                :return: a list of dictionaries of the separated region values (x, y, width, height)
                """
                assert isinstance(separation_direction, str), 'separation_direction must be a string.'

                if separation_direction == "vertical":
                    separation_axis = 'y'
                    separation_size = 'height'
                    isHorizontal = -1
                elif separation_direction == "horizontal":
                    separation_axis = 'x'
                    separation_size = 'width'
                    isHorizontal = 1
                else:
                    ValueError('f{separation_direction} is not a valid separation direction')

                section_size = panel[separation_size] / separation_count
                section_origin = panel[separation_axis] + (panel[separation_size] / 2)

                clutter_regions = []
                dummy_region = {}
                for i in range(0, separation_count):
                    dummy_region = dict(panel)


                    start_border = isHorizontal * round(i*section_size)
                    end_border = isHorizontal * round((i+1)*section_size)


                    section_start = round(section_origin + start_border) # find region's start
                    section_end = round(section_origin + end_border)
                    section_mid = round((section_start + section_end) / 2) # find midpoint between region's start and end

                    dummy_region[separation_axis] = section_start
                    dummy_region[separation_size] = section_size
                    clutter_regions.append(dummy_region)

                return clutter_regions

            def get_clutter_coordinate(self, clutter_region, direction, placement_index, placement_description=None):
                """ This function is used for obtaining axis coordinates for clutter placement

                :param clutter_region: (dict) enter the clutter's region dictionary obtained by clutter_separator (e.g. clutter[0] or clutter[target_clutter])

                :param placement_index: (int) List of 2 integers indicating the placement:
                        - [place_index, place_range] > [1, 4] > [0, 1, 2, 3] > second element (1) is the coordinate
                :param placement_description: "top" or "mid" part of the segmented region
                :return: point in coordinate system (x, y)
                """
                if direction == "vertical":
                    placement_axis = 'y'
                    placement_size = 'height'
                    isHorizontal = -1
                    section_origin =  clutter_region[placement_axis]
                elif direction == "horizontal":
                    placement_axis = 'x'
                    placement_size = 'width'
                    isHorizontal = 1
                    section_origin =  clutter_region[placement_axis] - (clutter_region[placement_size] / 2)
                else:
                    ValueError('f{separation_direction} is not a valid separation direction')

                if placement_description == None:
                    placement_description = "mid"

                section_count = placement_index[1]

                section_size = clutter_region[placement_size] / section_count

                for i in range(0, section_count):
                    start_border = isHorizontal * round(i*section_size)
                    end_border = isHorizontal * round((i+1)*section_size)

                    section_start = section_origin + start_border
                    section_end = section_origin + end_border
                    section_mid = round((section_start + section_end) / 2)

                    if i == placement_index[0]:
                        if placement_description == "mid":
                            return section_mid
                        elif placement_description == "top":
                            if placement_axis == 'y':
                                print('selected top - section start', section_start)
                                print('selected top - section origin', section_origin)
                            return section_start
                        elif placement_description == "bottom":
                            return section_end

            def getImageWithKeyword(self, directory, keyword):
                image_extensions = {'.png', '.jpg', '.jpeg', '.gif', '.bmp', '.tiff', '.webp'}

                for root, _, files in os.walk(directory):
                    for file in files:
                        if any(file.lower().endswith(ext) for ext in image_extensions) and keyword.lower() in file.lower():
                            return "/".join([root, file])
    CodeComponent exp_init
      Code Type = Py
      Begin Experiment:
        def getGarageText(boolean):
            if boolean == 0:
                return "Garage Door\nClosed"
            elif boolean == 1:
                return "Garage Door\nOpen"
            else:
                ValueError("Garage door clutter value is not valid.")

        def getDateTimeText(value):
            """
            param day_shift: used for changing the day display on the panel for changing clutter
            condition. adding or subtracting int value from day of the month (13 +- day_shift )
            """

            # get current day for text display on calemdar widget
            my_date = date.today()
            today = datetime.now()
            month_index = datetime.now().month
            month = calendar.month_name[month_index]
            numeric_day = today.day # this is a integer
            if numeric_day + value <= 0 or numeric_day + value > 31:
                ValueError("Unacceptable day of the month after subtracting the clutter change value.")
            else:
                str_num_day = str(numeric_day + value)
                if str_num_day[-1] == '1':
                    day_suffix = 'st'
                elif str_num_day[-1] == '2':
                    day_suffix = 'nd'
                elif str_num_day[-1] == '3':
                    day_suffix = 'rd'
                elif int(str_num_day[-1]) >= 4:
                    day_suffix = 'th'

                return str_num_day + " " + month +"\n" + calendar.day_name[my_date.weekday()] # e.g. 'Wednesday'\nNumber

        def updateText(value, key):

            if key == "duration":
                return ('').join(["1 hr ", str(value), " min"])
            elif key == "fuel":
                return ('').join([str(value) , " mpg"])
            elif key == "distance":
                return ('').join([str(value) , " mi"])
            elif key == "date":
                return getDateTimeText(value)
            elif key == "garage_door":
                return getGarageText(value)
            elif key == "battery":
                return ('').join(["%", str(value)])
            elif key == "miles":
                return ('').join([str(value), "mi"])
            elif key == "temperature":
                return ('').join([str(value), "F"])
            else:
                KeyError('Widget was not found [', key,']')


        def getImageWithKeyword(directory, keyword):
            image_extensions = {'.png', '.jpg', '.jpeg', '.gif', '.bmp', '.tiff', '.webp'}

            for root, _, files in os.walk(directory):
                for file in files:
                    if any(file.lower().endswith(ext) for ext in image_extensions) and keyword.lower() in file.lower():
                        return "/".join([root, file])



        def getPositions(widget_regions, position_percentage):
            """ This function is used for obtaining axis coordinates for clutter placement

            :param clutter_region: (dict) enter the clutter's region dictionary obtained by clutter_separator (e.g. clutter[0] or clutter[target_clutter])

            :param position_percentages: (int) List of 2 integers indicating the placement in percentage of the clutter region size:
                     [25, 50] => [width * 25/100, height * 50/100]
            :return: point in coordinate system (x, y)
            """

            y_origin = widget_regions['y'] + (widget_regions['height']/2)
            x_origin = widget_regions['x'] - (widget_regions['width']/2)

            return [round(x_origin + widget_regions['width']*(position_percentage[0]/100)),
                    round(y_origin - widget_regions['height']*(position_percentage[1]/100))]


        def getIconSize(widget_regions, size_ratio):
            """ This function is used for obtaining axis coordinates for clutter placement

            :param widget_regions: (dict) enter the clutter's region dictionary obtained by clutter_separator (e.g. clutter[0] or clutter[target_clutter])

            :param size_ratio: (int) List of 2 integers indicating the ratio of icon size relative to the widget region's width
            :return: size in pixels (w, h)
            """
            return [round(widget_regions['width']*(size_ratio[0])),
                    round(widget_regions['width']*(size_ratio[1]))]


        if 'win' not in locals():
            from panel_generation_function import Panel
            class win:
                def __init__(self):
                    self.size = [1920, 1080]
            window = win()
            panel_layout = Panel(window.size[0], window.size[1])

        else:
            panel_layout = Panel(win.size[0], win.size[1])

        widget_regions = panel_layout.generate_panel_layout([1, 0, 0, 1])

        target_panel = 2
        large_region_indices = [0, 5]
        small_region_indices = [1, 2, 3, 4]
        if target_panel in large_region_indices:
            large_region_indices.remove(target_panel)
        elif target_panel in small_region_indices:
            small_region_indices.remove(target_panel)

        all_widgets = [
                        {"name": "trip_widget",
                        "possible_regions": large_region_indices,
                        "region_index": 0,
                        "text_components":
                            {"trip_header": {"text": "Current Trip", "position_percentage": [15, 10], "position_pixel": []},
                            "duration": {"text": "", "position_percentage": [35, 25], "position_pixel": []},
                            "fuel": {"text": "", "position_percentage": [35, 50], "position_pixel": []},
                            "distance": {"text": "", "position_percentage": [35, 75], "position_pixel": []}
                            },
                         "image_components":
                         {"duration": {"file":  getImageWithKeyword("./stimuli/clutter", "duration"),
                                       "position_percentage": [20, 25], "position_pixel": [],
                                       "size_ratio": [0.3125, 0.3125], "size_pixel": []},
                          "fuel": {"file":  getImageWithKeyword("./stimuli/clutter", "fuel"),
                                   "position_percentage": [20, 50], "position_pixel": [],
                                       "size_ratio": [0.3125, 0.3125], "size_pixel": []},
                          "distance": {"file":  getImageWithKeyword("./stimuli/clutter", "distance"),
                                       "position_percentage": [20, 75], "position_pixel": [],
                                       "size_ratio": [0.3125, 0.3125], "size_pixel": []}
                          },
                        },

                        {"name": "calendar_widget",
                         "possible_regions": large_region_indices,
                         "region_index": 5,
                         "text_components":
                            {"date": {"text": "", "position_percentage": [20, 15], "position_pixel": []}
                             },
                         "image_components":
                         {"calendar": {"file":  getImageWithKeyword("./stimuli/clutter", "calendar"),
                                       "position_percentage": [50 , 70], "position_pixel": [],
                                       "size_ratio": [0.8, 0.8], "size_pixel": []}
                          },
                        },

                        {"name": "garage_widget",
                         "possible_regions": small_region_indices,
                         "region_index": 1,
                         "text_components":
                            {"garage_header": {"text": "My Home", "position_percentage": [15, 20], "position_pixel": []},
                             "garage_door": {"text": "", "position_percentage": [35, 50], "position_pixel": []}
                             },
                         "image_components":
                         {"garage": {"file":  getImageWithKeyword("./stimuli/clutter", "garage"),
                                     "position_percentage": [20, 50], "position_pixel": [],
                                       "size_ratio": [0.35, 0.35], "size_pixel": []}
                          },
                        },

                        {"name": "temperature_widget",
                        "possible_regions": small_region_indices,
                         "region_index": 3,
                         "text_components":
                            {"temperature": {"text": "", "position_percentage": [30, 40], "position_pixel": []}
                             },
                         "image_components":
                         {"temperature": {"file":  getImageWithKeyword("./stimuli/clutter", "temperature"),
                                          "position_percentage": [50, 50], "position_pixel": [],
                                       "size_ratio": [0.8, 0.8], "size_pixel": []}
                          },
                        },

                        {"name": "battery_widget",
                         "possible_regions": small_region_indices,
                         "region_index": 4,
                         "text_components":
                            {"battery": {"text": "", "position_percentage": [21, 45], "position_pixel": []},
                             "miles": {"text": "", "position_percentage": [55, 63], "position_pixel": []}
                             },
                         "image_components":
                         {"battery": {"file":  getImageWithKeyword("./stimuli/clutter", "battery"),
                                          "position_percentage": [50, 50], "position_pixel": [],
                                       "size_ratio": [0.8, 0.8], "size_pixel": []}
                          },
                        }
                ]

        dynamic_clutter_values = [{"duration": 28, "fuel": 34, "distance": 78},
                                  {"date": 0},
                                  {"garage_door": 0},
                                  {"temperature": 96},
                                  {"battery": 24, "miles": 76}]

        # TODO: function to change order of elements in each data strct. to do what?
        all_data_structures = [all_widgets, dynamic_clutter_values]

        for index in range(0, len(all_widgets)):
            curr_dyn_clutter = dynamic_clutter_values[index]
            for key, val in curr_dyn_clutter.items():
                all_widgets[index]["text_components"][key]["text"] = updateText(val, key)

        for index in range(0, len(all_widgets)):
            curr_text_comps = all_widgets[index]["text_components"]
            widget_index = all_widgets[index]["region_index"]
            for key, val in curr_text_comps.items():
                all_widgets[index]["text_components"][key]["position_pixel"] = getPositions(widget_regions[widget_index], val["position_percentage"])

            curr_img_comps = all_widgets[index]["image_components"]
            for key, val in curr_img_comps.items():
                all_widgets[index]["image_components"][key]["position_pixel"] = getPositions(widget_regions[widget_index], val["position_percentage"])
                all_widgets[index]["image_components"][key]["size_pixel"] = getIconSize(widget_regions[widget_index], val["size_ratio"])


        # letter size is dependent on the large panel's height
        letter_size = widget_regions[1]["height"] * 0.2
        day_size = widget_regions[1]["width"] * 0.125
        header_size = widget_regions[1]["width"]  * 0.1
        temperature_size = widget_regions[1]["width"]  * 0.14
        battery_size = widget_regions[1]["width"] * 0.085

        textFont = "./stimuli/font/georgia.ttf"

        text_size = widget_regions[1]["width"]/12
        header_wrap_width = 500

        exp_version = "no_clutter"

        if expInfo['cb_group'] == '1':
            block_rows = [0, 1, 2, 3, 4, 5]
        elif expInfo['cb_group'] == '2':
            block_rows = [0, 2, 1, 3, 4, 5]
        elif expInfo['cb_group'] == '3':
            block_rows = [0, 1, 1, 3, 5, 4]
        elif expInfo['cb_group'] == '4':
            block_rows = [0, 2, 1, 3, 5, 4]
        else:
            raise ValueError('Wrong counterbalance group, it should be 1, 2, 3, or 4')

        if expInfo['system'] == "mert":
            pixPerCm = 32.381
        elif expInfo['system'] == "lab":
            pixPerCm = 36.974
        else:
            raise ValueError("Incorrect system was entered, it can either be mert or lab.")

        stim_cm = 0.4349
        stim_size = stim_cm * pixPerCm

        mask_imgs = getFilesInDir("./stimuli/masks")


        frameRate = win.getActualFrameRate();
        # convert to py float
        frameRate = frameRate.item()
        if frameRate == None:
            frameRate = 60
        secPerFrame = 1 / frameRate
  Routine screen_display_images
    CodeComponent estimate_frame_durations_2
      Code Type = Py
      Begin Experiment:
        exp_clock = core.Clock()
        stim_duration = 0.5
      Begin Routine:
        t_start_time = exp_clock.getTime()
        tbegin = exp_clock.getTime()
        t_frame_time = []
        thisExp.addData('current_time', datetime.now().strftime("%H:%M:%S"));
        thisExp.addData('elapsed_time', exp_clock.getTime() - exp_start_time);
        checkKey = True
        checkTerminate = False
        print('trial print: ', current_font)

        first_two_blocks = (blocks.thisN < 2)

        # controlled descent for first two block, no descent for 3rd block
        staircaseUpdateEnabled = (trials.thisN > 8 and first_two_blocks) or (blocks.thisN == 2)

        if (trials.thisN < 3) and first_two_blocks:
            stimulus_duration = 0.800
            stimulus_frames = getFrames(stimulus_duration, secPerFrame)
        elif (trials.thisN < 6) and first_two_blocks:
            stimulus_duration = 0.400
            stimulus_frames = getFrames(stimulus_duration, secPerFrame)
        elif (trials.thisN < 9) and first_two_blocks:
            stimulus_duration = 0.200
            stimulus_frames = getFrames(stimulus_duration, secPerFrame)
        elif staircaseUpdateEnabled and staircaseEnabled:
            stimulus_frames = staircase_dict[current_font].testLevel
        elif task_name == "full_task_roboto" or task_name == "full_task_neuefrutigerworld" or task_name == "training_driving_lexical":
            stimulus_duration = 5
            stimulus_frames = getFrames(stimulus_duration, secPerFrame)
        else:
            stimulus_duration = 0.500
            stimulus_frames = getFrames(stimulus_duration, secPerFrame)

        if enableSound == 'yes':
            soundVolume = 1
            soundDuration = 1
            fixationDuration = soundDuration
            soundFrames = getFrames(soundDuration, secPerFrame)
            fixationFrames = getFrames(fixationDuration, secPerFrame)

            if (maskEnabled == "yes"):
                maskDuration = 0.200
                maskFrames = getFrames(maskDuration, secPerFrame)
                preMaskOffsetFrames = fixationFrames + 1
                postMaskOffsetFrames = preMaskOffsetFrames + maskFrames + stimulus_frames

                maskSize = [stim_size * xheight_to_size * 8, stim_size * xheight_to_size * 1.5]
                currentMaskImage = selectRandomMask(mask_imgs)
            else:
                currentMaskImage = []
                preMaskOffset = 0
                postMaskOffset = 0
                maskDuration = 0.01
                maskSize = [1, 1]

            stimOffsetFrames = preMaskOffsetFrames + maskFrames + 1
        elif enableSound == 'no':
            soundVolume = 0
            soundDuration = 0.01
            stimOffset = 0
        else:
            raise ValueError('Sound condition is not defined properly, type in yes or no in the blocks file')
      Each Frame:
        t_frame_time.append(round((exp_clock.getTime() - t_start_time)*1000,2))

        t_start_time = exp_clock.getTime()


        maskShown = frameN >= (postMaskOffsetFrames + maskFrames) - 1

        if lexical_response.keys and checkKey:
            print(lexical_response.keys)
            if lexical_response.keys[-1] == correct_ans:
               lexical_response.corr = 1
            else:
               lexical_response.corr = 0
            lexical_response.keys = []
            checkKey = False
            checkTerminate = True
        if checkTerminate and maskShown:
            print('terminate trial')
            continueRoutine = False
      End Routine:
        thisExp.addData('trial_frame_durations', t_frame_time);
        thisExp.addData('stimulus_frames', stimulus_frames);
        thisExp.addData('stimulus_duration', stimulus_frames * secPerFrame);

        # omission
        if checkKey == True:
            lexical_response.corr = 0

        acc_v = ["wrong", "correct"]
        thisExp.addData('response_accuracy', lexical_response.corr);

        if staircaseUpdateEnabled and staircaseEnabled:
            thisExp.addData('st_stepSizeFrames', staircase_dict[current_font].stepSize)
            thisExp.addData('st_stepSizeDuration', staircase_dict[current_font].stepSize * secPerFrame);
            thisExp.addData('st_font', current_font)
            thisExp.addData('st_trial_number', staircase_dict[current_font].nPresented + 1)
            thisExp.addData('st_nDown', staircase_dict[current_font].nDown)
            staircase_dict[current_font].update(lexical_response.corr)
            # register reversals after the update to
            # accurately mark the reversal trial
            thisExp.addData('st_is_reversal', (staircase_dict[current_font].selfSign * staircase_dict[current_font].lastSign) == -1)
            thisExp.addData('st_cumulative_reversals', staircase_dict[current_font].nReversals)
        else:
            thisExp.addData('st_stepSizeFrames', None)
            thisExp.addData('st_stepSizeDuration', None);
            thisExp.addData('st_font', None);
            thisExp.addData('st_is_reversal', None);
            thisExp.addData('st_cumulative_reversals', None);
            thisExp.addData('st_trial_number', None);
            thisExp.addData('st_nDown', None);
    ImageComponent background_panel
      image = stimuli/panels/background_panel.png
      pos [set every repeat] = panel_layout.panel_position
      size [set every repeat] = (panel_layout.panel_x_size, panel_layout.panel_y_size)
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = 300
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    ImageComponent panel1
      image = stimuli/panels/large_panel.png
      pos [set every repeat] = (widget_regions[0]['x'], widget_regions[0]['y'])
      size [set every repeat] = (widget_regions[0]['width'], widget_regions[0]['height'])
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = 300
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    ImageComponent panel2
      image = stimuli/panels/small_panel.png
      pos [set every repeat] = (widget_regions[1]['x'], widget_regions[1]['y'])
      size [set every repeat] = (widget_regions[1]['width'], widget_regions[1]['height'])
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = 300
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    ImageComponent panel3
      image = stimuli/panels/small_panel.png
      pos [set every repeat] = (widget_regions[2]['x'], widget_regions[2]['y'])
      size [set every repeat] = (widget_regions[2]['width'], widget_regions[2]['height'])
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = 300
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    ImageComponent panel4
      image = stimuli/panels/small_panel.png
      pos [set every repeat] = (widget_regions[3]['x'], widget_regions[3]['y'])
      size [set every repeat] = (widget_regions[3]['width'], widget_regions[3]['height'])
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = 300
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    ImageComponent panel5
      image = stimuli/panels/small_panel.png
      pos [set every repeat] = (widget_regions[4]['x'], widget_regions[4]['y'])
      size [set every repeat] = (widget_regions[4]['width'], widget_regions[4]['height'])
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = 300
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    ImageComponent panel6
      image = stimuli/panels/large_panel.png
      pos [set every repeat] = (widget_regions[5]['x'], widget_regions[5]['y'])
      size [set every repeat] = (widget_regions[5]['width'], widget_regions[5]['height'])
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = 300
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    ImageComponent pre_mask
      image [set every repeat] = $currentMaskImage
      pos [set every repeat] = (widget_regions[target_panel]['x'], widget_regions[target_panel]['y'])
      size [set every repeat] = maskSize
      startVal [frame N] = $preMaskOffsetFrames
      stopVal [duration (frames)] = $maskFrames
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    ImageComponent post_mask
      image [set every repeat] = $currentMaskImage
      pos [set every repeat] = (widget_regions[target_panel]['x'], widget_regions[target_panel]['y'])
      size [set every repeat] = maskSize
      startVal [frame N] = $postMaskOffsetFrames
      stopVal [duration (frames)] = $maskFrames
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    TextComponent lexical_text
      color = black
      font [set every repeat] = $current_font
      letterHeight [set every repeat] = stim_size * xheight_to_size
      pos [set every repeat] = (widget_regions[target_panel]['x'], widget_regions[target_panel]['y'])
      startVal [frame N] = $stimOffsetFrames
      stopVal [duration (frames)] = $stimulus_frames
      text [set every repeat] = $text
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    TextComponent fixation_cross
      color = black
      font [set every repeat] = $current_font
      letterHeight [set every repeat] = stim_size * xheight_to_size
      pos [set every repeat] = (widget_regions[target_panel]['x'], widget_regions[target_panel]['y'])
      startVal [frame N] = 0
      stopVal [duration (frames)] = $fixationFrames
      text [set every repeat] = +
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    KeyboardComponent lexical_response
      allowedKeys = 'y','n'
      correctAns = $correct_ans
      forceEndRoutine = False
      startVal [frame N] = 0.0
      stopVal [frame N] = 300
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    SoundComponent sound_cue
      disabled = True
      saveStartStop = False
      sound = A
      startVal [time (s)] = 0
      stopVal [duration (s)] = $soundDuration
      volume [set every repeat] = soundVolume
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  Routine routine_1
  Routine inter_trial_interval
    CodeComponent trial_init
      Code Type = Py
      Begin Routine:
        t_start_time = exp_clock.getTime()
        t_frame_time = []
        iti_duration = random.randint(iti_min*1000,iti_max*1000)/1000 # duration in msec units
        thisExp.addData('current_time', datetime.now().strftime("%H:%M:%S"));
      Each Frame:
        t_frame_time.append(round((exp_clock.getTime() - t_start_time)*1000,2))

        t_start_time = exp_clock.getTime()
      End Routine:
        thisExp.addData('trial_frame_durations', t_frame_time);
        thisExp.addData('iti_duration', iti_duration);
        print('is it working second end routine')
    ImageComponent background_panel_2
      image = stimuli/panels/background_panel.png
      pos [set every repeat] = panel_layout.panel_position
      size [set every repeat] = (panel_layout.panel_x_size, panel_layout.panel_y_size)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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    ImageComponent panel1_2
      image = stimuli/panels/large_panel.png
      pos [set every repeat] = (widget_regions[0]['x'], widget_regions[0]['y'])
      size [set every repeat] = (widget_regions[0]['width'], widget_regions[0]['height'])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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    ImageComponent panel2_2
      image = stimuli/panels/small_panel.png
      pos [set every repeat] = (widget_regions[1]['x'], widget_regions[1]['y'])
      size [set every repeat] = (widget_regions[1]['width'], widget_regions[1]['height'])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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    ImageComponent panel3_2
      image = stimuli/panels/small_panel.png
      pos [set every repeat] = (widget_regions[2]['x'], widget_regions[2]['y'])
      size [set every repeat] = (widget_regions[2]['width'], widget_regions[2]['height'])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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    ImageComponent panel4_2
      image = stimuli/panels/small_panel.png
      pos [set every repeat] = (widget_regions[3]['x'], widget_regions[3]['y'])
      size [set every repeat] = (widget_regions[3]['width'], widget_regions[3]['height'])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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    ImageComponent panel5_2
      image = stimuli/panels/small_panel.png
      pos [set every repeat] = (widget_regions[4]['x'], widget_regions[4]['y'])
      size [set every repeat] = (widget_regions[4]['width'], widget_regions[4]['height'])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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    ImageComponent panel6_2
      image = stimuli/panels/large_panel.png
      pos [set every repeat] = (widget_regions[5]['x'], widget_regions[5]['y'])
      size [set every repeat] = (widget_regions[5]['width'], widget_regions[5]['height'])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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  Routine get_trials
    CodeComponent extract_trials
      Code Type = Py
      Begin Experiment:
        all_word_trials = range(0, 759)
        all_nonword_trials = range(764, 1256)


        maxword_no = 159
        maxnonword_no = 1256



        staircase_dict = {}
      Begin Routine:
        current_WORD_trials = trial_sampling(all_word_trials, word_trial_count)
        current_NONWORD_trials = trial_sampling(all_nonword_trials, nonword_trial_count)

        all_word_trials = remove_elements(all_word_trials, current_WORD_trials)
        all_nonword_trials = remove_elements(all_nonword_trials, current_NONWORD_trials)

        current_trials = join_and_shuffle(current_WORD_trials, current_NONWORD_trials)

        print('block print: ', current_font)

        if blocks.thisN == 2 or blocks.thisN == 5:
            continueRoutine = False
            instructionDuration = 0.01
        else:
            instructionDuration = 999

        instr_y = win.size[1] * 2/3
        instr_x = instr_y * wh_ratio

        staircaseEnabled = task_name == "lexical_wo_driving_roboto" or task_name == "lexical_wo_driving_neuefrutigerworld"

        if staircaseEnabled:
            if (blocks.thisN < 2):
                trialsPerStaircase = 51
            elif blocks.thisN == 2:
                trialsPerStaircase = 60
            startFrames = getFrames(0.200, secPerFrame)
            staircase_dict[current_font] = staircaseFunction(trialsPerStaircase, trialsPerStaircase, startFrames, 1, 3, secPerFrame)
      End Routine:
        if blocks.thisN == 0:
            exp_start_time = exp_clock.getTime()
    ImageComponent background_panel_3
      image = stimuli/panels/background_panel.png
      pos [set every repeat] = panel_layout.panel_position
      size [set every repeat] = (panel_layout.panel_x_size, panel_layout.panel_y_size)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $instructionDuration
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $instructionDuration
      store = nothing
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    ImageComponent instruction_image
      image [set every repeat] = $instruction_image_file
      pos = (0, win.size[1]/6)
      size [set every repeat] = (instr_x, instr_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $instructionDuration
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  Routine finish_instructions
    ImageComponent background_panel_4
      image = stimuli/panels/background_panel.png
      pos [set every repeat] = panel_layout.panel_position
      size [set every repeat] = (panel_layout.panel_x_size, panel_layout.panel_y_size)
      startVal [time (s)] = 0.0
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    TextComponent finish_text
      color = black
      letterHeight = 50
      startVal [time (s)] = 0.0
      text = Experiment is finished, thank you!
      wrapWidth = 1000
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    KeyboardComponent finish_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine initialization
  LoopInitiator blocks loopType="TrialHandler"
    Selected rows = $block_rows
    conditionsFile = blocks_pilot.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'current_font': './stimuli/font/georgia.ttf', 'task_name': 'training_lexical', 'iti_min': 2, 'iti_max': 5, 'stimulus_duration': 2},
      {'current_font': './stimuli/font/robotoflex.ttf', 'task_name': 'lexical_wo_driving', 'iti_min': 2, 'iti_max': 5, 'stimulus_duration': 2},
      {'current_font': './stimuli/font/neuefrutigerworld.ttf', 'task_name': 'lexical_wo_driving', 'iti_min': 2, 'iti_max': 5, 'stimulus_duration': 2},
      {'current_font': './stimuli/font/georgia.ttf', 'task_name': 'training_driving_lexical', 'iti_min': 20, 'iti_max': 20, 'stimulus_duration': 5}]
    Routine get_trials
    LoopInitiator trials loopType="TrialHandler"
      Selected rows = $current_trials
      conditionsFile = stimulus_sheet.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'text': 'accent', 'wordNonword': 'word', 'correct_ans': 'y'},
        {'text': 'aching', 'wordNonword': 'word', 'correct_ans': 'y'},
        {'text': 'adding', 'wordNonword': 'word', 'correct_ans': 'y'},
        {'text': 'advent', 'wordNonword': 'word', 'correct_ans': 'y'},
        {'text': 'advise', 'wordNonword': 'word', 'correct_ans': 'y'},
        {'text': 'affect', 'wordNonword': 'word', 'correct_ans': 'y'},
        {'text': 'agrees', 'wordNonword': 'word', 'correct_ans': 'y'},
        {'text': 'aiming', 'wordNonword': 'word', 'correct_ans': 'y'},
        {'text': 'alight', 'wordNonword': 'word', 'correct_ans': 'y'},
        {'text': 'allied', 'wordNonword': 'word', 'correct_ans': 'y'},
        {'text': 'allows', 'wordNonword': 'word', 'correct_ans': 'y'},
        {'text': 'amazed', 'wordNonword': 'word', 'correct_ans': 'y'},
        {'text': 'angels', 'wordNonword': 'word', 'correct_ans': 'y'},
        {'text': 'angles', 'wordNonword': 'word', 'correct_ans': 'y'},
        {'text': 'annual', 'wordNonword': 'word', 'correct_ans': 'y'},
        {'text': 'appear', 'wordNonword': 'word', 'correct_ans': 'y'},
        {'text': 'archer', 'wordNonword': 'word', 'correct_ans': 'y'},
        {'text': 'ardent', 'wordNonword': 'word', 'correct_ans': 'y'},
        {'text': 'argues', 'wordNonword': 'word', 'correct_ans': 'y'},
        {'text': 'arises', 'wordNonword': 'word', 'correct_ans': 'y'},
        {'text': 'arouse', 'wordNonword': 'word', 'correct_ans': 'y'},
        {'text': 'assert', 'wordNonword': 'word', 'correct_ans': 'y'},
        {'text': 'assets', 'wordNonword': 'word', 'correct_ans': 'y'},
        {'text': 'assure', 'wordNonword': 'word', 'correct_ans': 'y'}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
      Routine inter_trial_interval
      Routine screen_display_images
    LoopTerminator trials
  LoopTerminator blocks
  Routine finish_instructions
