PsychoPy2experiment version="2022.2.3"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'monitor_cb': 'large', 'clutter_cb': '1', 'skip_training': 'no'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Use version = 2022.2.3
  Window size (pixels) = [1920, 1080]
  color = -1.0000, -1.0000, -1.0000
  expName = lexical_with_clutter_v2
  keyboardBackend = ioHub
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Routines
  Routine initialization
    CodeComponent function_definitions
      Code Type = Py
      Begin Experiment:
        from pprint import pprint
        import calendar
        import json
        import math
        import random
        from datetime import date
        from datetime import datetime
        import os
        from staircasing import staircaseFunction
        from masking import getFilesInDir, selectRandomMask
        import pandas as pd
        from pathlib import Path
        import os
        from PIL import Image

        def getIconInfo(folder_path):

            if not folder_path:
                print("No folder selected.")
                return {}

            files_info = {}

            for file_name in os.listdir(folder_path):
                file_path = os.path.join(folder_path, file_name)

                if os.path.isfile(file_path):
                    name, ext = os.path.splitext(file_name)
                    ext = ext.lower().strip(".")

                    file_data = {"extension": ext, "dimension": None}

                    try:
                        with Image.open(file_path) as img:
                            file_data["dimension"] = list(img.size)
                    except Exception:
                        pass

                    files_info[name] = file_data

            return files_info

        def getClutterOrderCounterbalanceGroup(order_file = "clutter_change_order_cb.xlsx", cb_group = "1", practice_change_count = 5):
            if not isinstance(cb_group, str):
                raise ValueError(f"Counterbalance group is not entered as string {cb_group}, its type is instead {type(cb_group)}")

            xlsx_path = Path(order_file)

            df = pd.read_excel(xlsx_path)

            df.columns = [str(c).strip().lower() for c in df.columns]

            df.head(), df.columns.tolist()
            required = {"blocks", "block_trial_#", "gr1", "gr2", "gr3", "gr4"}
            missing = required - set(df.columns)
            if missing:
                raise ValueError(f"Missing columns: {missing}")

            def block_num(s):
                try:
                    return int(str(s).split()[-1])
                except Exception:
                    return str(s)

            grouped = sorted(df.groupby("blocks"), key=lambda kv: block_num(kv[0]))

            gr_lists = {"gr1": [], "gr2": [], "gr3": [], "gr4": []}
            block_labels = []

            for block_label, g in grouped:
                block_labels.append(block_label)
                for gr in gr_lists.keys():
                    idx = g.loc[g[gr].astype(int) == 1, "block_trial_#"].astype(int).tolist()
                    gr_lists[gr].append(idx)

            # insert two randomly generated change index for the two clutter training parts
            random_practice_indices1 = random.sample(range(0, 20), practice_change_count)
            random_practice_indices2 = random.sample(range(0, 20), practice_change_count)
            random_practice_indices1.sort()
            random_practice_indices2.sort()
            gr_lists["gr" + cb_group].insert(0, random_practice_indices2)
            gr_lists["gr" + cb_group].insert(0, random_practice_indices1)

            selected_list = gr_lists["gr" + cb_group]
            print(f"Selected clutter change order group {cb_group} indices are: {selected_list}")
            return selected_list



        def getRandomChangingIconIndex(clutter_change_v, number_of_changes):
            clutterIconChangeIndex = []
            while True:
                for i in range(0, number_of_changes):
                    clutterIconChangeIndex.extend(random.sample(clutter_change_v,
                                                min(len(clutter_change_v),
                                                    number_of_changes - len(clutterIconChangeIndex))))
                    if len(clutterIconChangeIndex) == number_of_changes:
                        return clutterIconChangeIndex

        def changeClutterIcon(all_widgets, dynamic_clutter_icons, clutter_index):
            cur_key = dynamic_clutter_icons[clutter_index[0]][clutter_index[1]]
            all_widgets[clutter_index[0]]["image_components"][cur_key]["file"] = getImageWithKeyword("./stimuli/clutter", cur_key + "_2")
            thisExp.addData('clutter_changed_icon', cur_key)


        def revertClutterIcon(all_widgets, dynamic_clutter_icons, clutter_index):
            cur_key = dynamic_clutter_icons[clutter_index[0]][clutter_index[1]]
            all_widgets[clutter_index[0]]["image_components"][cur_key]["file"] = getImageWithKeyword("./stimuli/clutter", cur_key + "_1")


        def getFrames(component_duration, secPerFrame):
            return round(component_duration / secPerFrame)

        def trialSampling(vector, n):
            if n > len(vector):
                raise ValueError("n cannot be greater than the length of the vector.")

            return random.sample(vector, n)

        def joinAndShuffle(vector1, vector2):
            combined = vector1 + vector2
            random.shuffle(combined)
            return combined

        def removeElements(source_vector, elements_to_remove):
            result = [x for x in source_vector if x not in elements_to_remove]
            return result


        def getDateTimeText():
            # get current day for text display on calemdar widget
            my_date = date.today()
            today = datetime.now()
            month_index = datetime.now().month
            month = calendar.month_name[month_index]
            numeric_day = today.day # this is a integer
            str_num_day = str(numeric_day)
            if str_num_day[-1] == '1':
                day_suffix = 'st'
            elif str_num_day[-1] == '2':
                day_suffix = 'nd'
            elif str_num_day[-1] == '3':
                day_suffix = 'rd'
            elif int(str_num_day[-1]) >= 4:
                day_suffix = 'th'

            return str_num_day + day_suffix + " " + month +"\n" + calendar.day_name[my_date.weekday()] # e.g. 'Wednesday'\nNumber


        def getImageWithKeyword(directory, keyword):
            image_extensions = {'.png', '.jpg', '.jpeg', '.gif', '.bmp', '.tiff', '.webp'}

            for root, _, files in os.walk(directory):
                for file in files:
                    if any(file.lower().endswith(ext) for ext in image_extensions) and keyword.lower() in file.lower():
                        return "/".join([root, file])

        def correctTextPosition(text_stim, text_position):
            if hasattr(text_stim, 'boundingBox'):
                return [text_position[0] + text_stim.boundingBox[0]/2, text_position[1]]
            else:
                return text_position

        def correctPosition(icon_size, icon_position):
            """deprecated after update on positioning and sizes"""
            return icon_position
        #    return [icon_position[0] - icon_size[0]/2,
        #    icon_position[1] - icon_size[1]/2] # math.copysign(icon_size[0], icon_position[0])/2, math.copysign(icon_size[1], icon_position[1])/2]
        #

        def correctPositionSmall(icon_size, icon_position):
            """deprecated after update on positioning and sizes"""
            return icon_position
        #    return [icon_position[0] + icon_size[0]/2, icon_position[1]]



        def getChangeIndex(dyn_values, chang_indx):
            change_order = []
            # chang_indx represents the len(keys) in dynamic_clutter_values
            while True:
                rand_indx = random.randint(0, len(chang_indx) - 1)
                if chang_indx[rand_indx] != 0:
                    cur_clut = dyn_values[rand_indx]
                    keys = list(cur_clut.keys())
                    selectAgain = False
                    while True:
                        rand_keyi = random.randint(0, len(keys) - 1)
                        selected_key = keys[rand_keyi]
                        for ki in range(0, len(change_order)):
                            lookup_key = change_order[ki][1]
                            if selected_key == lookup_key:
                                selectAgain = True
                        if selectAgain:
                            break
                        else:
                            change_order.append([rand_indx, selected_key])
                            chang_indx[rand_indx] = chang_indx[rand_indx] - 1
                            break
                elif sum(chang_indx) == 0:
                    break
            return change_order

        def generateChangeSequence():
            return random.sample(range(1, 12), 8)

        def getGarageText(boolean):
            if boolean == 0:
                return "Garage Door\nClosed"
            elif boolean == 1:
                return "Garage Door\nOpen"
            else:
                ValueError("Garage door clutter value is not valid.")

        def getDateTimeText(value):
            """
            param day_shift: used for changing the day display on the panel for changing clutter
            condition. adding or subtracting int value from day of the month (13 +- day_shift )
            """

            # get current day for text display on calemdar widget
            my_date = date.today()
            today = datetime.now()
            month_index = datetime.now().month
            month = calendar.month_name[month_index]
            numeric_day = today.day # this is a integer
            if numeric_day + value <= 0 or numeric_day + value > 31:
                ValueError("Unacceptable day of the month after subtracting the clutter change value.")
            else:
                str_num_day = str(numeric_day + value)
                if str_num_day[-1] == '1':
                    day_suffix = 'st'
                elif str_num_day[-1] == '2':
                    day_suffix = 'nd'
                elif str_num_day[-1] == '3':
                    day_suffix = 'rd'
                elif int(str_num_day[-1]) >= 4:
                    day_suffix = 'th'

                return str_num_day + " " + month +"\n" + calendar.day_name[my_date.weekday()] # e.g. 'Wednesday'\nNumber

        def updateText(value, key):

            if key == "duration":
                return ('').join(["1 hr ", str(value), " min"])
            elif key == "fuel":
                return ('').join([str(value) , " mpg"])
            elif key == "distance":
                return ('').join([str(value) , " mi"])
            elif key == "date":
                return getDateTimeText(value)
            elif key == "garage_door":
                return getGarageText(value)
            elif key == "battery":
                return ('').join(["%", str(value)])
            elif key == "miles":
                return ('').join([str(value), "mi"])
            elif key == "temperature":
                return ('').join([str(value), "F"])
            else:
                KeyError('Widget was not found [', key,']')


        def getImageWithKeyword(directory, keyword):
            image_extensions = {'.png', '.jpg', '.jpeg', '.gif', '.bmp', '.tiff', '.webp'}

            for root, _, files in os.walk(directory):
                for file in files:
                    if any(file.lower().endswith(ext) for ext in image_extensions) and keyword.lower() in file.lower():
                        return "/".join([root, file])



        def getPositions(widget_regions, position_percentage):
            """ This function is used for obtaining axis coordinates for clutter placement

            :param clutter_region: (dict) enter the clutter's region dictionary obtained by clutter_separator (e.g. clutter[0] or clutter[target_clutter])

            :param position_percentages: (int) List of 2 integers indicating the placement in percentage of the clutter region size:
                     [25, 50] => [width * 25/100, height * 50/100]
            :return: point in coordinate system (x, y)
            """

            y_origin = widget_regions['y'] + (widget_regions['height']/2)
            x_origin = widget_regions['x'] - (widget_regions['width']/2)

            return [round(x_origin + widget_regions['width']*(position_percentage[0]/100)),
                    round(y_origin - widget_regions['height']*(position_percentage[1]/100))]


        def getIconSize(widget_regions, size_ratio):
            """ This function is used for obtaining axis coordinates for clutter placement

            :param widget_regions: (dict) enter the clutter's region dictionary obtained by clutter_separator (e.g. clutter[0] or clutter[target_clutter])

            :param size_ratio: (int) List of 2 integers indicating the ratio of icon size relative to the widget region's width
            :return: size in pixels (w, h)
            """
            return [round(widget_regions['width']*(size_ratio[0])),
                    round(widget_regions['width']*(size_ratio[1]))]
    CodeComponent panel_initialization
      Code Type = Py
      Begin Experiment:
        # Example usage:
        class Panel:
            def __init__(self, x, y, scale_ratiosV = [1, 3/4], scale_empty_partV = ["", "bottom"]):
                self.x = x
                self.y = y
                self.column_spacing = 0.03
                self.row_spacing = 0.03
                self.scale_ratios = scale_ratiosV
                self.scale_empty_part = scale_empty_partV
                self.panel_x_size = round(x * self.scale_ratios[0])
                self.panel_y_size = round(y * self.scale_ratios[1])
                self.panel_position = self.estimate_panel_position()

            def estimate_panel_position(self):

                if self.scale_empty_part[0] == "left":
                    x_axis_shift = 1
                elif self.scale_empty_part[0] == "right":
                    x_axis_shift = -1
                else:
                    x_axis_shift = 0

                if self.scale_empty_part[1] == "top":
                    y_axis_shift = -1
                elif self.scale_empty_part[1] == "bottom":
                    y_axis_shift = 1
                else:
                    y_axis_shift = 0

                return [round(0.5 * x_axis_shift * (self.x * (1 - self.scale_ratios[0]))),
                            round(0.5 * y_axis_shift * (self.y * (1 - self.scale_ratios[1])))]

            def generate_panel_layout(self, config):
                """
                Generates panel regions based on input config list.
                :param config: list of 4 integers, each 0 or 1
                               1 = single full-height panel in the column
                               0 = two half-height panels in the column
                :param win: object with win.x and win.y for screen width and height
                :return: list of panel region dictionaries with x, y, width, height
                """
                assert len(config) == 4, "Config must have exactly 4 elements (one per column)"
                assert all(c in (0, 1) for c in config), "Each config entry must be 0 or 1"

                window_origin_x = self.panel_position[0] - self.panel_x_size / 2
                window_origin_y = self.panel_position[1] + self.panel_y_size / 2

                if self.scale_empty_part[1] == "top":
                    window_origin_y = window_origin_y - self.panel_y_size / 2

                if self.scale_empty_part[0] == "left":
                    window_origin_x = window_origin_x - self.panel_x_size / 2
                elif self.scale_empty_part[0] == "right":
                    window_origin_x = window_origin_x - self.panel_x_size / 2

                panel_width = self.panel_x_size
                panel_height = self.panel_y_size
                col_spacing_ratio = self.column_spacing
                row_spacing_ratio = self.row_spacing
                num_col_spacings = 5  # 3 between + 2 sides
                col_spacing = panel_width * col_spacing_ratio
                row_spacing = panel_height * row_spacing_ratio
                region_width = (panel_width - (col_spacing * num_col_spacings)) / 4
                regions = []

                for col in range(4):
                    x = window_origin_x + col_spacing * (col + 1) + region_width * col + region_width / 2
                    if config[col] == 1:
                        # Single full-height panel (minus top & bottom spacing)
                        height = panel_height - 2*row_spacing
                        y = window_origin_y - row_spacing - height / 2
                        regions.append({
                            "x": int(x),
                            "y": int(y),
                            "width": int(region_width),
                            "height": int(height)
                        })
                    else:
                        # Two half-height panels
                        height = (panel_height - 3 * row_spacing) / 2
                        for row in range(2):
                            y = window_origin_y - (row_spacing * (row + 1) + height * row) - height / 2
                            regions.append({
                                "x": int(x),
                                "y": int(y),
                                "width": int(region_width),
                                "height": int(height)
                            })

                return regions
    CodeComponent exp_init
      Code Type = Py
      Begin Experiment:
        TEXT_WIDGETS_ENABLED = False
        IMAGE_WIDGETS_ENABLED = True
        SMALL_ICON_SIZE_RATIO = [0.5, 0.5]
        LARGE_ICON_SIZE_RATIO = [0.5, 0.5]


        pixPerCm = 36.974 # pix per cm in lab's monitor

        isLargeScreen =  expInfo['monitor_cb'] == 'large'
        isSmallScreen =  expInfo['monitor_cb'] == 'small'
        isFullScreen =  expInfo['monitor_cb'] == 'full'

        if 'win' not in locals():
            from panel_generation_function import Panel
            class win:
                def __init__(self):
                    self.size = [1920, 1080]
            window = win()
            panel_layout = Panel(window.size[0], window.size[1])

        else:
            if isLargeScreen:
                panel_layout = Panel(win.size[0], win.size[1])
                small_panel_image = "stimuli/panels/small_panel.png"
                large_panel_image = "stimuli/panels/large_panel.png"
            elif isSmallScreen:
                desired_vertical_height = 8.636 # cm
                desired_vertical_pixel = desired_vertical_height * pixPerCm
                desired_horizontal_pixel = (desired_vertical_pixel/9) * 16
                x_ratio = desired_horizontal_pixel/win.size[0]
                y_ratio = desired_vertical_pixel/win.size[1]
                panel_layout = Panel(win.size[0], win.size[1],
                                     scale_ratiosV = [x_ratio, y_ratio],
                                     scale_empty_partV = ["", "bottom"])
                small_panel_image = "stimuli/panels/small_panel_small.png"
                large_panel_image = "stimuli/panels/large_panel_small.png"
            elif isFullScreen:
                small_panel_image = "stimuli/panels/small_panel_small.png"
                large_panel_image = "stimuli/panels/large_panel_small.png"
                panel_layout = Panel(win.size[0], win.size[1],
                                     scale_ratiosV = [1, 1],
                                     scale_empty_partV = ["", ""])
            else:
                raise ValueError('Wrong MONITOR counterbalance group, it should be 1 or 2 (CHECK initalization > exp_init > line 281)')




        widget_regions = panel_layout.generate_panel_layout([1, 0, 0, 1])

        target_panel = 2
        large_region_indices = [0, 5]
        small_region_indices = [1, 2, 3, 4]
        if target_panel in large_region_indices:
            large_region_indices.remove(target_panel)
        elif target_panel in small_region_indices:
            small_region_indices.remove(target_panel)



        all_widgets = [
                        {"name": "maintenance_widget",
                        "possible_regions": large_region_indices,
                        "region_index": 0,
                        "text_components": {},
                         "image_components":
                         {"engine": {"file":  getImageWithKeyword("./stimuli/clutter", "engine_1"),
                                       "position_percentage": [50, 25], "position_pixel": [],
                                       "size_ratio": SMALL_ICON_SIZE_RATIO, "size_pixel": []},
                          "oil": {"file":  getImageWithKeyword("./stimuli/clutter", "oil_1"),
                                   "position_percentage": [50, 50], "position_pixel": [],
                                       "size_ratio": SMALL_ICON_SIZE_RATIO, "size_pixel": []},
                          "tirepressure": {"file":  getImageWithKeyword("./stimuli/clutter", "tirepressure_1"),
                                   "position_percentage": [50, 75], "position_pixel": [],
                                       "size_ratio": SMALL_ICON_SIZE_RATIO, "size_pixel": []}
                          },
                        },

                        {"name": "drive_widget",
                         "possible_regions": large_region_indices,
                         "region_index": 5,
                         "text_components": {},
                         "image_components":
                         {"fuel": {"file":  getImageWithKeyword("./stimuli/clutter", "fuel_1"),
                                       "position_percentage": [50 , 25], "position_pixel": [],
                                       "size_ratio": SMALL_ICON_SIZE_RATIO, "size_pixel": []},
                            "ecosport": {"file":  getImageWithKeyword("./stimuli/clutter", "ecosport_1"),
                                            "position_percentage": [50 , 50], "position_pixel": [],
                                            "size_ratio": SMALL_ICON_SIZE_RATIO, "size_pixel": []},
                            "farlight": {"file":  getImageWithKeyword("./stimuli/clutter", "farlight_1"),
                                            "position_percentage": [50 , 75], "position_pixel": [],
                                            "size_ratio": SMALL_ICON_SIZE_RATIO, "size_pixel": []}
                          },
                        },

                        {"name": "cardoor_widget",
                         "possible_regions": small_region_indices,
                         "region_index": 1,
                         "text_components": {},
                         "image_components":
                         {"cardoor": {"file":  getImageWithKeyword("./stimuli/clutter", "cardoor_1"),
                                     "position_percentage": [50, 50], "position_pixel": [],
                                       "size_ratio": LARGE_ICON_SIZE_RATIO, "size_pixel": []}
                          },
                        },

                        {"name": "carheat_widget",
                        "possible_regions": small_region_indices,
                         "region_index": 3,
                         "text_components": {},
                         "image_components":
                         {"carheat": {"file":  getImageWithKeyword("./stimuli/clutter", "carheat_1"),
                                          "position_percentage": [50, 50], "position_pixel": [],
                                       "size_ratio": LARGE_ICON_SIZE_RATIO, "size_pixel": []}
                          },
                        },

                        {"name": "media_widget",
                         "possible_regions": small_region_indices,
                         "region_index": 4,
                         "text_components": {},
                         "image_components":
                         {"media": {"file":  getImageWithKeyword("./stimuli/clutter", "media_1"),
                                          "position_percentage": [50, 50], "position_pixel": [],
                                       "size_ratio": LARGE_ICON_SIZE_RATIO, "size_pixel": []}
                          },
                        }
                ]

        dynamic_clutter_values = [{"duration": 28, "fuel": 34, "distance": 78},
                                  {"date": 0},
                                  {"garage_door": 0},
                                  {"temperature": 96},
                                  {"battery": 24, "miles": 76}]

        # TODO: function to change order of elements in each data strct. to do what?
        all_data_structures = [all_widgets, dynamic_clutter_values]

        for index in range(0, len(all_widgets)):
            widget_index = all_widgets[index]["region_index"]

            if TEXT_WIDGETS_ENABLED:
                curr_dyn_clutter = dynamic_clutter_values[index]
                for key, val in curr_dyn_clutter.items():
                    all_widgets[index]["text_components"][key]["text"] = updateText(val, key)

                curr_text_comps = all_widgets[index]["text_components"]
                for key, val in curr_text_comps.items():
                    all_widgets[index]["text_components"][key]["position_pixel"] = getPositions(widget_regions[widget_index], val["position_percentage"])

            if IMAGE_WIDGETS_ENABLED:
                curr_img_comps = all_widgets[index]["image_components"]
                for key, val in curr_img_comps.items():
                    all_widgets[index]["image_components"][key]["position_pixel"] = getPositions(widget_regions[widget_index], val["position_percentage"])
                    all_widgets[index]["image_components"][key]["size_pixel"] = getIconSize(widget_regions[widget_index], val["size_ratio"])

        # letter size is dependent on the large panel's height
        letter_size = widget_regions[1]["height"] * 0.2
        day_size = widget_regions[1]["width"] * 0.125
        header_size = widget_regions[1]["width"]  * 0.1
        temperature_size = widget_regions[1]["width"]  * 0.14
        battery_size = widget_regions[1]["width"] * 0.085
        end_instr_y = win.size[1] * 2/3
        end_instr_x =  win.size[0] * 2/3

        textFont = "./stimuli/font/robotoflex.ttf"

        text_size = widget_regions[1]["width"]/12
        header_wrap_width = 500

        exp_version = "WITH_clutter"

        # randomization
        first_block = [1,2,3]
        second_block = [6, 7, 8]
        random.shuffle(first_block)
        random.shuffle(second_block)

        if expInfo['skip_training'] == "yes":
            block_rows = second_block
        else:
            block_rows = [0] + first_block + [4, 5] + second_block


        stim_cm = 0.4349
        stim_size = stim_cm * pixPerCm

        mask_imgs = getFilesInDir("./stimuli/masks")

        frameRate = win.getActualFrameRate()
        print("***** FRAME RATE: ", frameRate)
        # convert to py float
        frameRate = frameRate.item()
        if frameRate == None:
            frameRate = 60
        secPerFrame = 1 / frameRate

        scoreScreen = {}
        scoreScreen["lexical_only"] = {"accuracy": [], "reaction_time": []}
        scoreScreen["driving_lexical"] = {"accuracy": [], "reaction_time": []}


        clutter_test = "no"
        if clutter_test == "yes":
            blocks_file = "blocks_final_express.xlsx"
        else:
            blocks_file = "blocks_final.xlsx"
    CodeComponent init_clutter
      Code Type = Py
      Begin Routine:
        clutter_icon_index_v = [[0, 0], [0, 1], [0, 2], [1, 0], [1, 1], [1, 2], [2, 0], [3, 0], [4, 0]]

        dynamic_clutter_icons = [["engine", "oil", "tirepressure"],
                                  ["fuel", "ecosport", "farlight"],
                                  ["cardoor"],
                                  ["carheat"],
                                  ["media"]]

        clutter_change_order_indices = getClutterOrderCounterbalanceGroup(cb_group = expInfo["clutter_cb"])
        clutter_changed_icon_indices = getRandomChangingIconIndex(clutter_icon_index_v, 9)
        clutter_changed_icon_indices_practice = getRandomChangingIconIndex(clutter_icon_index_v, 5)
  Routine screen_display_images
    CodeComponent estimate_frame_durations_2
      Code Type = Py
      Begin Experiment:
        exp_clock = core.Clock()
        stim_duration = 0.5
        minimum_acceptable_rt = 0.100
      Begin Routine:
        t_start_time = exp_clock.getTime()
        t_frame_time = []
        thisExp.addData('elapsed_time', exp_clock.getTime() - exp_start_time);
        thisExp.addData('current_time', datetime.now().strftime("%H:%M:%S"));

        if trials.thisN == 0:
            stim_duration = 0.1
            dummy_panel_size = [panel_layout.panel_x_size, panel_layout.panel_y_size]
        else:
            stim_duration = 99
            dummy_panel_size = [1, 1]

        checkKey = True
        checkTerminate = False

        # controlled descent for first two block, no descent for 3rd or more block
        first_two_blocks = (blocks.thisN < 2)
        staircaseUpdateEnabled = (trials.thisN > 9 and first_two_blocks) or (blocks.thisN > 1)

        # stimulus duration
        if (trials.thisN < 4) and first_two_blocks:
            stimulus_duration = 0.800
            stimulus_frames = getFrames(stimulus_duration, secPerFrame)
        elif (trials.thisN < 7) and first_two_blocks:
            stimulus_duration = 0.400
            stimulus_frames = getFrames(stimulus_duration, secPerFrame)
        elif (trials.thisN < 10) and first_two_blocks:
            stimulus_duration = 0.200
            stimulus_frames = getFrames(stimulus_duration, secPerFrame)
        elif staircaseUpdateEnabled and staircaseEnabled:
            stimulus_frames = staircase_dict[current_font].testLevel
        elif drivingLexicalTask or task_name == "training_driving_lexical":
            stimulus_duration = 5
            stimulus_frames = getFrames(stimulus_duration, secPerFrame)
        else:
            stimulus_duration = 0.500
            stimulus_frames = getFrames(stimulus_duration, secPerFrame)

        # mask/fixation size-durations-offsets
        fixationDuration = 1
        fixationFrames = getFrames(fixationDuration, secPerFrame)
        currentMaskImage = selectRandomMask(mask_imgs)
        preMaskOffsetFrames = fixationFrames

        if (maskEnabled == "yes"):
            maskDuration = 0.200
            maskFrames = getFrames(maskDuration, secPerFrame)
            if isLargeScreen:
                maskSize = [stim_size * xheight_to_size * 8, stim_size * xheight_to_size * 1.5]
            elif isSmallScreen:
                # decrease horizontal size of mask if this is a small screen
                maskSize = [widget_regions[target_panel]['width']*.95, stim_size * xheight_to_size * 1.5]
            else:
                maskSize = [widget_regions[target_panel]['width']*.95, stim_size * xheight_to_size * 1.5]
        else:
            preMaskOffset = 0
            postMaskOffset = 0
            maskDuration = 0.01
            maskSize = [1, 1]
            maskFrames = 0

        postMaskOffsetFrames = preMaskOffsetFrames + maskFrames + stimulus_frames
        stimOffsetFrames = preMaskOffsetFrames + maskFrames

        # sound config
        if enableSound == 'yes':
            soundVolume = 1
            soundDuration = fixationDuration
            soundFrames = getFrames(soundDuration, secPerFrame)
            if trials.thisN == 0:
                soundVolume = 0
                soundDuration = 0.01
                soundFrames = getFrames(soundDuration, secPerFrame)
        elif enableSound == 'no':
            soundVolume = 0
            soundDuration = 0.01
            stimOffset = 0
        else:
            raise ValueError('Sound condition is not defined properly, type in yes or no in the blocks file')

        if trials.thisN == 0:
            trialDurationSeconds = 0.1
            maskFrames = 0
            soundFrames = 0
            stimOffsetFrames = 0
            postMaskOffsetFrames = 0
            preMaskOffsetFrames = 0
            fixationFrames = 0
            stimulus_frames = 0
        else:
            trialDurationSeconds = 6

        trialDurationFrames = getFrames(trialDurationSeconds, secPerFrame)
      Each Frame:
        t_frame_time.append(round((exp_clock.getTime() - t_start_time)*1000,2))
        t_start_time = exp_clock.getTime()

        if lexical_response.keys and checkKey:
            # comission
            if frameN <= stimOffsetFrames:
                lexical_response.corr = 0
            elif lexical_response.keys[-1] == correct_ans:
               lexical_response.corr = 1
            else:
               lexical_response.corr = 0
            # adjust rt for stim offset
            reaction_time = lexical_response.rt - (stimOffsetFrames * secPerFrame)
            lexical_response.keys = []
            checkKey = False
            checkTerminate = True

        if blocks.thisN < 4:
            trialTerminateEnabled = frameN >= (postMaskOffsetFrames + maskFrames) - 1
        else:
            trialTerminateEnabled = frameN >= fixationFrames

        if checkTerminate and trialTerminateEnabled:
            continueRoutine = False
      End Routine:
        thisExp.addData('trial_frame_durations', t_frame_time);
        thisExp.addData('stimulus_frames', stimulus_frames);
        thisExp.addData('stimulus_duration', stimulus_frames * secPerFrame);

        if checkKey == True:
            # omission
            lexical_response.corr = 0
            reaction_time = 0

        if reaction_time < minimum_acceptable_rt:
            # early response
            lexical_response.corr = 0

        if scoreRegistry != 'pass':
            scoreScreen[scoreRegistry]["accuracy"].append(lexical_response.corr)
            if reaction_time > minimum_acceptable_rt:
                scoreScreen[scoreRegistry]["reaction_time"].append(reaction_time)

        thisExp.addData('resp_corrected_rt', reaction_time);
        thisExp.addData('resp_accuracy', lexical_response.corr);
        if staircaseUpdateEnabled and staircaseEnabled:
            thisExp.addData('st_stepSizeFrames', staircase_dict[current_font].stepSize)
            thisExp.addData('st_stepSizeDuration', staircase_dict[current_font].stepSize * secPerFrame);
            thisExp.addData('st_font', current_font)
            thisExp.addData('st_trial_number', staircase_dict[current_font].nPresented + 1)
            thisExp.addData('st_nDown', staircase_dict[current_font].nDown)
            staircase_dict[current_font].update(lexical_response.corr)
            # register reversals after the update to
            # accurately mark the reversal trial
            thisExp.addData('st_is_reversal', (staircase_dict[current_font].selfSign * staircase_dict[current_font].lastSign) == -1)
            thisExp.addData('st_cumulative_reversals', staircase_dict[current_font].nReversals)
        else:
            thisExp.addData('st_stepSizeFrames', None)
            thisExp.addData('st_stepSizeDuration', None);
            thisExp.addData('st_font', None);
            thisExp.addData('st_is_reversal', None);
            thisExp.addData('st_cumulative_reversals', None);
            thisExp.addData('st_trial_number', None);
            thisExp.addData('st_nDown', None);


        practiceBlockN = 4
        if clutterChangeEnabled:
            thisExp.addData('change_order_indices', clutter_change_order_indices[blocks.thisN - practiceBlockN]);
            if clutterProgressionEnabled:
                if trials.thisN == clutter_change_order_indices[blocks.thisN - practiceBlockN][change_iteration]:
                    if task_name == "full_task_training" or task_name == "full_task_wo_driving_training":
                        print('clutter reverted training')
                        revertClutterIcon(all_widgets, dynamic_clutter_icons, clutter_changed_icon_indices_practice[change_iteration])
                    elif blocks.thisN > practiceBlockN:
                        print('clutter reverted test')
                        revertClutterIcon(all_widgets, dynamic_clutter_icons, clutter_changed_icon_indices[change_iteration])
                    change_iteration = change_iteration + 1

            if (len(clutter_change_order_indices[blocks.thisN - practiceBlockN]) - 1) < change_iteration:
                print('clutter progression disabled')
                clutterProgressionEnabled = False
            else:
                print('clutter progression enabled')
                clutterProgressionEnabled = True
    ImageComponent background_panel
      image = stimuli/panels/background_panel.png
      pos [set every repeat] = panel_layout.panel_position
      size [set every repeat] = (panel_layout.panel_x_size, panel_layout.panel_y_size)
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $trialDurationFrames
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    ImageComponent panel1
      image [set every repeat] = $large_panel_image
      pos [set every repeat] = (widget_regions[0]['x'], widget_regions[0]['y'])
      size [set every repeat] = (widget_regions[0]['width'], widget_regions[0]['height'])
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $trialDurationFrames
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    ImageComponent panel2
      image [set every repeat] = $small_panel_image
      pos [set every repeat] = (widget_regions[1]['x'], widget_regions[1]['y'])
      size [set every repeat] = (widget_regions[1]['width'], widget_regions[1]['height'])
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $trialDurationFrames
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    ImageComponent panel3
      image [set every repeat] = $small_panel_image
      pos [set every repeat] = (widget_regions[2]['x'], widget_regions[2]['y'])
      size [set every repeat] = (widget_regions[2]['width'], widget_regions[2]['height'])
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $trialDurationFrames
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    ImageComponent panel4
      image [set every repeat] = $small_panel_image
      pos [set every repeat] = (widget_regions[3]['x'], widget_regions[3]['y'])
      size [set every repeat] = (widget_regions[3]['width'], widget_regions[3]['height'])
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $trialDurationFrames
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    ImageComponent panel5
      image [set every repeat] = $small_panel_image
      pos [set every repeat] = (widget_regions[4]['x'], widget_regions[4]['y'])
      size [set every repeat] = (widget_regions[4]['width'], widget_regions[4]['height'])
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $trialDurationFrames
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    ImageComponent panel6
      image = $large_panel_image
      pos [set every repeat] = (widget_regions[5]['x'], widget_regions[5]['y'])
      size [set every repeat] = (widget_regions[5]['width'], widget_regions[5]['height'])
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $trialDurationFrames
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    ImageComponent pre_mask
      image [set every repeat] = $currentMaskImage
      pos [set every repeat] = (widget_regions[target_panel]['x'], widget_regions[target_panel]['y'])
      size [set every repeat] = maskSize
      startVal [frame N] = $preMaskOffsetFrames
      stopVal [duration (frames)] = $maskFrames
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    ImageComponent post_mask
      image [set every repeat] = $currentMaskImage
      pos [set every repeat] = (widget_regions[target_panel]['x'], widget_regions[target_panel]['y'])
      size [set every repeat] = maskSize
      startVal [frame N] = $postMaskOffsetFrames
      stopVal [duration (frames)] = $maskFrames
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    TextComponent lexical_text
      color = black
      font [set every repeat] = $current_font
      letterHeight [set every repeat] = stim_size * xheight_to_size
      pos [set every repeat] = (widget_regions[target_panel]['x'], widget_regions[target_panel]['y'])
      startVal [frame N] = $stimOffsetFrames
      stopVal [duration (frames)] = $stimulus_frames
      text [set every repeat] = $text
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    TextComponent fixation_cross
      color = black
      font [set every repeat] = $current_font
      letterHeight [set every repeat] = stim_size * xheight_to_size
      pos [set every repeat] = (widget_regions[target_panel]['x'], widget_regions[target_panel]['y'])
      startVal [frame N] = 0
      stopVal [duration (frames)] = $fixationFrames
      text [set every repeat] = +
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    ImageComponent widget1_symbol1
      image [set every repeat] = $all_widgets[0]["image_components"]["engine"]["file"]
      pos [set every repeat] = correctPositionSmall(all_widgets[0]["image_components"]["engine"]["size_pixel"], all_widgets[0]["image_components"]["engine"]["position_pixel"])
      size [set every repeat] = $all_widgets[0]["image_components"]["engine"]["size_pixel"]
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $trialDurationFrames
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    ImageComponent widget1_symbol2
      image [set every repeat] = $all_widgets[0]["image_components"]["oil"]["file"]
      pos [set every repeat] = correctPositionSmall(all_widgets[0]["image_components"]["oil"]["size_pixel"], all_widgets[0]["image_components"]["oil"]["position_pixel"])
      size [set every repeat] = all_widgets[0]["image_components"]["oil"]["size_pixel"]
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $trialDurationFrames
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    ImageComponent widget1_symbol3
      image [set every repeat] = $all_widgets[0]["image_components"]["tirepressure"]["file"]
      pos [set every repeat] = correctPositionSmall(all_widgets[0]["image_components"]["tirepressure"]["size_pixel"], all_widgets[0]["image_components"]["tirepressure"]["position_pixel"])
      size [set every repeat] = all_widgets[0]["image_components"]["tirepressure"]["size_pixel"]
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $trialDurationFrames
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    TextComponent widget1_text1
      color = black
      disabled = True
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = text_size
      pos [set every repeat] = correctTextPosition(widget1_text1, all_widgets[0]["text_components"]["duration"]["position_pixel"])
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $trialDurationFrames
      text [set every repeat] = $all_widgets[0]["text_components"]["duration"]["text"]
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    TextComponent widget1_text2
      color = black
      disabled = True
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = text_size
      pos [set every repeat] = correctTextPosition(widget1_text2, all_widgets[0]["text_components"]["fuel"]["position_pixel"])
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $trialDurationFrames
      text [set every repeat] = $all_widgets[0]["text_components"]["fuel"]["text"]
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    TextComponent widget1_text3
      color = black
      disabled = True
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = text_size
      pos [set every repeat] = correctTextPosition(widget1_text3, all_widgets[0]["text_components"]["distance"]["position_pixel"])
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $trialDurationFrames
      text [set every repeat] = $all_widgets[0]["text_components"]["distance"]["text"]
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    TextComponent widget1_text4
      color = black
      disabled = True
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = header_size
      pos [set every repeat] = correctTextPosition(widget1_text4, all_widgets[0]["text_components"]["trip_header"]["position_pixel"])
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $trialDurationFrames
      text [set every repeat] = $all_widgets[0]["text_components"]["trip_header"]["text"]
      wrapWidth = header_wrap_width
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    ImageComponent widget2_symbol1
      image [set every repeat] = $all_widgets[2]["image_components"]["cardoor"]["file"]
      pos [set every repeat] = correctPositionSmall(all_widgets[2]["image_components"]["cardoor"]["size_pixel"], all_widgets[2]["image_components"]["cardoor"]["position_pixel"])
      size [set every repeat] = all_widgets[2]["image_components"]["cardoor"]["size_pixel"]
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $trialDurationFrames
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    TextComponent widget2_text1
      color = black
      disabled = True
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = header_size
      pos [set every repeat] = correctTextPosition(widget2_text1, all_widgets[2]["text_components"]["garage_header"]["position_pixel"])
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $trialDurationFrames
      text [set every repeat] = $all_widgets[2]["text_components"]["garage_header"]["text"]
      wrapWidth = header_wrap_width
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    TextComponent widget2_text2
      color = black
      disabled = True
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = text_size
      pos [set every repeat] = correctTextPosition(widget2_text2, all_widgets[2]["text_components"]["garage_door"]["position_pixel"])
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $trialDurationFrames
      text [set every repeat] = $all_widgets[2]["text_components"]["garage_door"]["text"]
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    ImageComponent widget3_symbol1
      image [set every repeat] = $all_widgets[3]["image_components"]["carheat"]["file"]
      pos [set every repeat] = correctPositionSmall(all_widgets[3]["image_components"]["carheat"]["size_pixel"], all_widgets[3]["image_components"]["carheat"]["position_pixel"])
      size [set every repeat] = all_widgets[3]["image_components"]["carheat"]["size_pixel"]
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $trialDurationFrames
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    TextComponent widget3_text1
      color = black
      disabled = True
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = temperature_size
      pos [set every repeat] = correctTextPosition(widget3_text1, all_widgets[3]["text_components"]["temperature"]["position_pixel"])
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $trialDurationFrames
      text [set every repeat] = $all_widgets[3]["text_components"]["temperature"]["text"]
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    ImageComponent widget4_symbol1
      image [set every repeat] = $all_widgets[4]["image_components"]["media"]["file"]
      pos [set every repeat] = correctPositionSmall(all_widgets[4]["image_components"]["media"]["size_pixel"], all_widgets[4]["image_components"]["media"]["position_pixel"])
      size [set every repeat] = all_widgets[4]["image_components"]["media"]["size_pixel"]
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $trialDurationFrames
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    TextComponent widget4_text1
      color = black
      disabled = True
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = battery_size
      pos [set every repeat] = correctTextPosition(widget4_text1, all_widgets[4]["text_components"]["battery"]["position_pixel"])
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $trialDurationFrames
      text [set every repeat] = $all_widgets[4]["text_components"]["battery"]["text"]
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    TextComponent widget4_text2
      color = black
      disabled = True
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = battery_size
      pos [set every repeat] = correctTextPosition(widget4_text1, all_widgets[4]["text_components"]["miles"]["position_pixel"])
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $trialDurationFrames
      text [set every repeat] = $all_widgets[4]["text_components"]["miles"]["text"]
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    TextComponent widget5_text1
      color = black
      disabled = True
      flip [set every repeat] = None
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = day_size
      ori [set every repeat] = 0
      pos [set every repeat] = correctTextPosition(widget5_text1, all_widgets[1]["text_components"]["date"]["position_pixel"])
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $trialDurationFrames
      text [set every repeat] = $all_widgets[1]["text_components"]["date"]["text"]
      wrapWidth = header_wrap_width
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    ImageComponent widget5_symbol1
      image [set every repeat] = $all_widgets[1]["image_components"]["fuel"]["file"]
      pos [set every repeat] = correctPositionSmall(all_widgets[1]["image_components"]["fuel"]["size_pixel"], all_widgets[1]["image_components"]["fuel"]["position_pixel"])
      size [set every repeat] = all_widgets[1]["image_components"]["fuel"]["size_pixel"]
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $trialDurationFrames
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    ImageComponent widget5_symbol2
      image [set every repeat] = $all_widgets[1]["image_components"]["ecosport"]["file"]
      pos [set every repeat] = correctPositionSmall(all_widgets[1]["image_components"]["ecosport"]["size_pixel"], all_widgets[1]["image_components"]["ecosport"]["position_pixel"])
      size [set every repeat] = all_widgets[1]["image_components"]["ecosport"]["size_pixel"]
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $trialDurationFrames
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    ImageComponent widget5_symbol3
      image [set every repeat] = $all_widgets[1]["image_components"]["farlight"]["file"]
      pos [set every repeat] = correctPositionSmall(all_widgets[1]["image_components"]["farlight"]["size_pixel"], all_widgets[1]["image_components"]["farlight"]["position_pixel"])
      size [set every repeat] = all_widgets[1]["image_components"]["farlight"]["size_pixel"]
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $trialDurationFrames
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    KeyboardComponent lexical_response
      allowedKeys = 'y','n'
      correctAns = $correct_ans
      forceEndRoutine = False
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $trialDurationFrames
      storeCorrect = True
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    CodeComponent align_text
      Code Type = Py
      disabled = True
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      Begin Routine:
        alignment_var = "left"

        #
        #widget1_text1.alignText = alignment_var
        #widget1_text2.alignText = alignment_var
        #widget1_text3.alignText = alignment_var
        #widget1_text4.alignText = alignment_var
        #
        #widget2_text1.alignText = alignment_var
        #widget2_text2.alignText = alignment_var
        #
        #widget5_text1.alignText = alignment_var


        widget1_text4.bold = True
        widget2_text1.bold = True
        widget3_text1.bold = True
        widget4_text1.bold = True
        widget4_text2.bold = True
        widget5_text1.bold = True
    ImageComponent background_panel_3
      image = stimuli/panels/background_panel.png
      pos [set every repeat] = panel_layout.panel_position
      size [set every repeat] = dummy_panel_size
      startVal [frame N] = 0
      stopVal [duration (frames)] = $trialDurationFrames
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    SoundComponent sound_cue
      saveStartStop = False
      sound = A
      startVal [time (s)] = 0
      stopVal [duration (s)] = $soundDuration
      volume [set every repeat] = soundVolume
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  Routine routine_1
    UnknownComponent routine
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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  Routine inter_trial_interval
    CodeComponent estimate_frame_durations
      Code Type = Py
      Begin Routine:
        t_start_time = exp_clock.getTime()
        t_frame_time = []
        thisExp.addData('current_time', datetime.now().strftime("%H:%M:%S"));

        if trials.thisN == 0:
            # skipping first trial to align text clutters (depcrecated but here, just in case)
            iti_duration = 0.1
            dummy_panel_size = [panel_layout.panel_x_size, panel_layout.panel_y_size]
        else:
            iti_duration = random.randint(iti_min*1000,iti_max*1000)/1000 # duration in msec units
            dummy_panel_size = [1, 1]
        thisExp.addData('iti_duration', iti_duration);
      Each Frame:
        t_frame_time.append(round((exp_clock.getTime() - t_start_time)*1000,2))

        t_start_time = exp_clock.getTime()
      End Routine:
        thisExp.addData('trial_frame_durations', t_frame_time);
        practiceBlockN = 4
        if clutterProgressionEnabled and clutterChangeEnabled:
            if trials.thisN == clutter_change_order_indices[blocks.thisN - practiceBlockN][change_iteration]:
                if task_name == "full_task_training" or task_name == "full_task_wo_driving_training":
                    thisExp.addData('clutter_changed_trial', clutter_change_order_indices[blocks.thisN - practiceBlockN][change_iteration]);
                    changeClutterIcon(all_widgets, dynamic_clutter_icons, clutter_changed_icon_indices_practice[change_iteration])
                    print('****training clutter changed****')
                    print("BLOCK: ", blocks.thisN)
                    print("change iteration: ", change_iteration)

                elif blocks.thisN > practiceBlockN:
                    thisExp.addData('clutter_changed_trial', clutter_change_order_indices[blocks.thisN - practiceBlockN][change_iteration]);
                    changeClutterIcon(all_widgets, dynamic_clutter_icons, clutter_changed_icon_indices[change_iteration])
                    print('****test clutter changed****')
                    print("BLOCK: ", blocks.thisN)
                    print("change iteration: ", change_iteration)
    ImageComponent background_panel_2
      image = stimuli/panels/background_panel.png
      pos [set every repeat] = panel_layout.panel_position
      size [set every repeat] = (panel_layout.panel_x_size, panel_layout.panel_y_size)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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    ImageComponent panel1_2
      image [set every repeat] = $large_panel_image
      pos [set every repeat] = (widget_regions[0]['x'], widget_regions[0]['y'])
      size [set every repeat] = (widget_regions[0]['width'], widget_regions[0]['height'])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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    ImageComponent panel2_2
      image [set every repeat] = $small_panel_image
      pos [set every repeat] = (widget_regions[1]['x'], widget_regions[1]['y'])
      size [set every repeat] = (widget_regions[1]['width'], widget_regions[1]['height'])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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    ImageComponent panel3_2
      image [set every repeat] = $small_panel_image
      pos [set every repeat] = (widget_regions[2]['x'], widget_regions[2]['y'])
      size [set every repeat] = (widget_regions[2]['width'], widget_regions[2]['height'])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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    ImageComponent panel4_2
      image [set every repeat] = $small_panel_image
      pos [set every repeat] = (widget_regions[3]['x'], widget_regions[3]['y'])
      size [set every repeat] = (widget_regions[3]['width'], widget_regions[3]['height'])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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    ImageComponent panel5_2
      image [set every repeat] = $small_panel_image
      pos [set every repeat] = (widget_regions[4]['x'], widget_regions[4]['y'])
      size [set every repeat] = (widget_regions[4]['width'], widget_regions[4]['height'])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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    ImageComponent panel6_2
      image [set every repeat] = $large_panel_image
      pos [set every repeat] = (widget_regions[5]['x'], widget_regions[5]['y'])
      size [set every repeat] = (widget_regions[5]['width'], widget_regions[5]['height'])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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    ImageComponent widget1_symbol1_2
      image [set every repeat] = $all_widgets[0]["image_components"]["engine"]["file"]
      pos [set every repeat] = correctPositionSmall(all_widgets[0]["image_components"]["engine"]["size_pixel"], all_widgets[0]["image_components"]["engine"]["position_pixel"])
      size [set every repeat] = $all_widgets[0]["image_components"]["engine"]["size_pixel"]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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    ImageComponent widget1_symbol2_2
      image [set every repeat] = $all_widgets[0]["image_components"]["oil"]["file"]
      pos [set every repeat] = correctPositionSmall(all_widgets[0]["image_components"]["oil"]["size_pixel"], all_widgets[0]["image_components"]["oil"]["position_pixel"])
      size [set every repeat] = all_widgets[0]["image_components"]["oil"]["size_pixel"]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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    ImageComponent widget1_symbol3_2
      image [set every repeat] = $all_widgets[0]["image_components"]["tirepressure"]["file"]
      pos [set every repeat] = correctPositionSmall(all_widgets[0]["image_components"]["tirepressure"]["size_pixel"], all_widgets[0]["image_components"]["tirepressure"]["position_pixel"])
      size [set every repeat] = all_widgets[0]["image_components"]["tirepressure"]["size_pixel"]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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    TextComponent widget1_text1_2
      color = black
      disabled = True
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = text_size
      pos [set every repeat] = correctTextPosition(widget1_text1, all_widgets[0]["text_components"]["duration"]["position_pixel"])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
      text [set every repeat] = $all_widgets[0]["text_components"]["duration"]["text"]
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    TextComponent widget1_text2_2
      color = black
      disabled = True
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = text_size
      pos [set every repeat] = correctTextPosition(widget1_text2, all_widgets[0]["text_components"]["fuel"]["position_pixel"])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
      text [set every repeat] = $all_widgets[0]["text_components"]["fuel"]["text"]
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    TextComponent widget1_text3_2
      color = black
      disabled = True
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = text_size
      pos [set every repeat] = correctTextPosition(widget1_text3, all_widgets[0]["text_components"]["distance"]["position_pixel"])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
      text [set every repeat] = $all_widgets[0]["text_components"]["distance"]["text"]
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    TextComponent widget1_text4_2
      color = black
      disabled = True
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = header_size
      pos [set every repeat] = correctTextPosition(widget1_text4, all_widgets[0]["text_components"]["trip_header"]["position_pixel"])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
      text [set every repeat] = $all_widgets[0]["text_components"]["trip_header"]["text"]
      wrapWidth = header_wrap_width
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    ImageComponent widget2_symbol1_2
      image [set every repeat] = $all_widgets[2]["image_components"]["cardoor"]["file"]
      pos [set every repeat] = correctPositionSmall(all_widgets[2]["image_components"]["cardoor"]["size_pixel"], all_widgets[2]["image_components"]["cardoor"]["position_pixel"])
      size [set every repeat] = all_widgets[2]["image_components"]["cardoor"]["size_pixel"]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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    TextComponent widget2_text1_2
      color = black
      disabled = True
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = header_size
      pos [set every repeat] = correctTextPosition(widget2_text1, all_widgets[2]["text_components"]["garage_header"]["position_pixel"])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
      text [set every repeat] = $all_widgets[2]["text_components"]["garage_header"]["text"]
      wrapWidth = header_wrap_width
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    TextComponent widget2_text2_2
      color = black
      disabled = True
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = text_size
      pos [set every repeat] = correctTextPosition(widget2_text2, all_widgets[2]["text_components"]["garage_door"]["position_pixel"])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
      text [set every repeat] = $all_widgets[2]["text_components"]["garage_door"]["text"]
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    ImageComponent widget3_symbol1_2
      image [set every repeat] = $all_widgets[3]["image_components"]["carheat"]["file"]
      pos [set every repeat] = correctPositionSmall(all_widgets[3]["image_components"]["carheat"]["size_pixel"], all_widgets[3]["image_components"]["carheat"]["position_pixel"])
      size [set every repeat] = all_widgets[3]["image_components"]["carheat"]["size_pixel"]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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    TextComponent widget3_text1_2
      color = black
      disabled = True
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = temperature_size
      pos [set every repeat] = correctTextPosition(widget3_text1, all_widgets[3]["text_components"]["temperature"]["position_pixel"])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
      text [set every repeat] = $all_widgets[3]["text_components"]["temperature"]["text"]
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    ImageComponent widget4_symbol1_2
      image [set every repeat] = $all_widgets[4]["image_components"]["media"]["file"]
      pos [set every repeat] = correctPositionSmall(all_widgets[4]["image_components"]["media"]["size_pixel"], all_widgets[4]["image_components"]["media"]["position_pixel"])
      size [set every repeat] = all_widgets[4]["image_components"]["media"]["size_pixel"]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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    TextComponent widget4_text1_2
      color = black
      disabled = True
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = battery_size
      pos [set every repeat] = correctTextPosition(widget4_text1, all_widgets[4]["text_components"]["battery"]["position_pixel"])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
      text [set every repeat] = $all_widgets[4]["text_components"]["battery"]["text"]
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    TextComponent widget4_text2_2
      color = black
      disabled = True
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = battery_size
      pos [set every repeat] = correctTextPosition(widget4_text1, all_widgets[4]["text_components"]["miles"]["position_pixel"])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
      text [set every repeat] = $all_widgets[4]["text_components"]["miles"]["text"]
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    TextComponent widget5_text1_2
      color = black
      disabled = True
      flip [set every repeat] = None
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = day_size
      ori [set every repeat] = 0
      pos [set every repeat] = correctTextPosition(widget5_text1, all_widgets[1]["text_components"]["date"]["position_pixel"])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
      text [set every repeat] = $all_widgets[1]["text_components"]["date"]["text"]
      wrapWidth = header_wrap_width
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    ImageComponent widget5_symbol1_2
      image [set every repeat] = $all_widgets[1]["image_components"]["fuel"]["file"]
      pos [set every repeat] = correctPositionSmall(all_widgets[1]["image_components"]["fuel"]["size_pixel"], all_widgets[1]["image_components"]["fuel"]["position_pixel"])
      size [set every repeat] = all_widgets[1]["image_components"]["fuel"]["size_pixel"]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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    ImageComponent widget5_symbol2_2
      image [set every repeat] = $all_widgets[1]["image_components"]["ecosport"]["file"]
      pos [set every repeat] = correctPositionSmall(all_widgets[1]["image_components"]["ecosport"]["size_pixel"], all_widgets[1]["image_components"]["ecosport"]["position_pixel"])
      size [set every repeat] = all_widgets[1]["image_components"]["ecosport"]["size_pixel"]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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    ImageComponent widget5_symbol3_2
      image [set every repeat] = $all_widgets[1]["image_components"]["farlight"]["file"]
      pos [set every repeat] = correctPositionSmall(all_widgets[1]["image_components"]["farlight"]["size_pixel"], all_widgets[1]["image_components"]["farlight"]["position_pixel"])
      size [set every repeat] = all_widgets[1]["image_components"]["farlight"]["size_pixel"]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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    CodeComponent align_text_2
      Code Type = Py
      disabled = True
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      Begin Routine:
        alignment_var = "left"

        #
        #widget1_text1.alignText = alignment_var
        #widget1_text2.alignText = alignment_var
        #widget1_text3.alignText = alignment_var
        #widget1_text4.alignText = alignment_var
        #
        #widget2_text1.alignText = alignment_var
        #widget2_text2.alignText = alignment_var
        #
        #widget5_text1.alignText = alignment_var


        widget1_text4.bold = True
        widget2_text1.bold = True
        widget3_text1.bold = True
        #widget4_text1.bold = True
        #widget4_text2.bold = True
        widget5_text1.bold = True
    ImageComponent background_panel_4
      image = stimuli/panels/background_panel.png
      pos [set every repeat] = panel_layout.panel_position
      size [set every repeat] = dummy_panel_size
      startVal [time (s)] = 0
      stopVal [duration (s)] = $iti_duration
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    CodeComponent text_align
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        alignment_var = "left"

        #
        #widget1_text1_2.alignText = alignment_var
        #widget1_text2_2.alignText = alignment_var
        #widget1_text3_2.alignText = alignment_var
        #widget1_text4_2.alignText = alignment_var
        #
        #widget2_text1_2.alignText = alignment_var
        #widget2_text2_2.alignText = alignment_var
        #
        #widget5_text1_2.alignText = alignment_var

        widget1_text4_2.bold = True
        widget2_text1_2.bold = True
        widget3_text1_2.bold = True
        widget4_text1_2.bold = True
        widget4_text2_2.bold = True
        widget5_text1_2.bold = True
  Routine get_trials
    CodeComponent extract_trials
      Code Type = Py
      Begin Experiment:
        all_word_trials = range(0, 759)
        all_nonword_trials = range(764, 1256)
        maxword_no = 759
        maxnonword_no = 1256
        staircase_dict = {}
      Begin Routine:
        current_WORD_trials = trialSampling(all_word_trials, word_trial_count)
        current_NONWORD_trials = trialSampling(all_nonword_trials, nonword_trial_count)

        all_word_trials = removeElements(all_word_trials, current_WORD_trials)
        all_nonword_trials = removeElements(all_nonword_trials, current_NONWORD_trials)

        current_trials = joinAndShuffle(current_WORD_trials, current_NONWORD_trials)
        current_trials = [0] + current_trials
        print('block print: ', current_font)

        if blocks.thisN == 2 or blocks.thisN == 3 or blocks.thisN == 7 or blocks.thisN == 8:
            continueRoutine = False
            instructionDuration = 0.01
        else:
            instructionDuration = 999

        instr_y = win.size[1] * 2/3
        instr_x = instr_y * wh_ratio

        staircaseEnabled = blocks.thisN > 0 and blocks.thisN < 4
        drivingLexicalTask = blocks.thisN > 4
        lexicalOnlyTask = staircaseEnabled

        if staircaseEnabled:
            if (blocks.thisN < 2):
                trialsPerStaircase = 51
            elif blocks.thisN > 1:
                trialsPerStaircase = 60
            startFrames = getFrames(0.200, secPerFrame)
            staircase_dict[current_font] = staircaseFunction(trialsPerStaircase, trialsPerStaircase, startFrames, 1, 3, secPerFrame)

        # used for iterating over change-order-indices, ++ every time clutter changes.
        change_iteration = 0

        print(clutterChangeEnabled, type(clutterChangeEnabled))
        clutterProgressionEnabled = True
      End Routine:
        if blocks.thisN == 0:
            exp_start_time = exp_clock.getTime()
    ImageComponent background_panel_5
      image = stimuli/panels/background_panel.png
      pos [set every repeat] = panel_layout.panel_position
      size [set every repeat] = (panel_layout.panel_x_size, panel_layout.panel_y_size)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $instructionDuration
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $instructionDuration
      store = nothing
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    ImageComponent instruction_image
      image [set every repeat] = $instruction_image_file
      pos = (0, win.size[1]/6)
      size [set every repeat] = (instr_x, instr_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $instructionDuration
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  Routine finish_instructions
    CodeComponent prepareScores
      Code Type = Py
      Begin Routine:
        for key, val in scoreScreen.items():
            if len(scoreScreen[key]["accuracy"]):
                scoreScreen[key]["mean_acc"] = sum(scoreScreen[key]["accuracy"]) / len(scoreScreen[key]["accuracy"])
            else:
                scoreScreen[key]["mean_acc"] = 0

            if len(scoreScreen[key]["reaction_time"]) > 0:
                scoreScreen[key]["mean_rt"] = sum(scoreScreen[key]["reaction_time"]) / len(scoreScreen[key]["reaction_time"])
            else:
                scoreScreen[key]["mean_rt"] = 0
            scoreScreen[key]["percent_acc"] = str(round(scoreScreen[key]["mean_acc"] *  100)) + "%"
            scoreScreen[key]["mean_rt_text"] = str(round(scoreScreen[key]["mean_rt"], 3)) + " seconds."

        scoreText1 = "You've responded " + scoreScreen["lexical_only"]["percent_acc"] + " of trials correctly with average reaction time of " + scoreScreen["lexical_only"]["mean_rt_text"]
        scoreText2 = "You've responded " + scoreScreen["driving_lexical"]["percent_acc"] + " of trials correctly during driving and lexical task with average reaction time of " + scoreScreen["driving_lexical"]["mean_rt_text"]
        print("score screen dict: ", json.dumps(scoreScreen, indent=4))
        showScoreBothTasks = False
        if showScoreBothTasks:
            initialText = "Experiment is finished, thank you! Your performance for each task is outlined below."
            scoreTextWhole = "\n\n".join([initialText, "Lexical Only Task:", scoreText1, "Driving and Lexical Task:", scoreText2])
        else:
            initialText = "Experiment is finished, thank you! Your performance is outlined below."
            scoreTextWhole = "\n\n".join([initialText, "Driving and Lexical Task:", scoreText2])
    ImageComponent background_panel_6
      image = stimuli/panels/background_panel.png
      pos [set every repeat] = panel_layout.panel_position
      size [set every repeat] = (end_instr_x, end_instr_y)
      startVal [time (s)] = 0.0
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    TextComponent finish_text
      color = black
      letterHeight [set every repeat] = (stim_size * xheight_to_size) * 2/3
      pos [set every repeat] = panel_layout.panel_position
      startVal [time (s)] = 0.0
      text [set every repeat] = $scoreTextWhole
      wrapWidth = end_instr_x * 0.85
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    KeyboardComponent finish_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blank_300ms
    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        white_space_duration = 0.300
        black_space_duration = 0.300
      Begin Routine:
        if blocks.thisN == 6:
            white_space_duration = 0.300
            black_space_duration = 0.300
        else:
            white_space_duration = 0.01
            black_space_duration = 0.01
            continueRoutine = False
    ImageComponent first_black_flash
      image = stimuli/panels/black_background_panel.png
      pos [set every repeat] = panel_layout.panel_position
      size [set every repeat] = (panel_layout.panel_x_size, panel_layout.panel_y_size)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $black_space_duration
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    ImageComponent second_white_flash
      image = stimuli/panels/background_panel.png
      pos [set every repeat] = panel_layout.panel_position
      size [set every repeat] = (panel_layout.panel_x_size, panel_layout.panel_y_size)
      startVal [time (s)] = 0.299
      stopVal [duration (s)] = $white_space_duration
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    ImageComponent third_black_flash
      image = stimuli/panels/black_background_panel.png
      pos [set every repeat] = panel_layout.panel_position
      size [set every repeat] = (panel_layout.panel_x_size, panel_layout.panel_y_size)
      startVal [time (s)] = 0.599
      stopVal [duration (s)] = $black_space_duration
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    ImageComponent white_ten_seconds
      image = stimuli/panels/background_panel.png
      pos [set every repeat] = panel_layout.panel_position
      size [set every repeat] = (panel_layout.panel_x_size, panel_layout.panel_y_size)
      startVal [time (s)] = 0.899
      stopVal [duration (s)] = 10
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Flow
  Routine initialization
  LoopInitiator blocks loopType="TrialHandler"
    Selected rows = $block_rows
    conditionsFile = $blocks_file
    loopType = sequential
    nReps = 1
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    Routine get_trials
    Routine blank_300ms
    LoopInitiator trials loopType="TrialHandler"
      Selected rows = $current_trials
      conditionsFile = stimulus_sheet.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'text': 'accent', 'wordNonword': 'w', 'currentFont': 'Arial'},
        {'text': 'aching', 'wordNonword': 'w', 'currentFont': 'Arial'},
        {'text': 'adding', 'wordNonword': 'w', 'currentFont': 'Arial'},
        {'text': 'advent', 'wordNonword': 'w', 'currentFont': 'Arial'},
        {'text': 'advise', 'wordNonword': 'w', 'currentFont': 'Arial'},
        {'text': 'affect', 'wordNonword': 'w', 'currentFont': 'Arial'},
        {'text': 'agrees', 'wordNonword': 'w', 'currentFont': 'Arial'},
        {'text': 'aiming', 'wordNonword': 'w', 'currentFont': 'Arial'},
        {'text': 'alight', 'wordNonword': 'w', 'currentFont': 'Arial'},
        {'text': 'allied', 'wordNonword': 'w', 'currentFont': 'Arial'},
        {'text': 'allows', 'wordNonword': 'w', 'currentFont': 'Arial'},
        {'text': 'amazed', 'wordNonword': 'w', 'currentFont': 'Arial'},
        {'text': 'angels', 'wordNonword': 'w', 'currentFont': 'Arial'},
        {'text': 'angles', 'wordNonword': 'w', 'currentFont': 'Arial'},
        {'text': 'annual', 'wordNonword': 'w', 'currentFont': 'Arial'},
        {'text': 'appear', 'wordNonword': 'w', 'currentFont': 'Arial'},
        {'text': 'archer', 'wordNonword': 'w', 'currentFont': 'Arial'},
        {'text': 'ardent', 'wordNonword': 'w', 'currentFont': 'Arial'},
        {'text': 'argues', 'wordNonword': 'w', 'currentFont': 'Arial'},
        {'text': 'arises', 'wordNonword': 'w', 'currentFont': 'Arial'},
        {'text': 'arouse', 'wordNonword': 'w', 'currentFont': 'Arial'},
        {'text': 'assert', 'wordNonword': 'w', 'currentFont': 'Arial'},
        {'text': 'assets', 'wordNonword': 'w', 'currentFont': 'Arial'},
        {'text': 'assure', 'wordNonword': 'w', 'currentFont': 'Arial'}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
      Routine inter_trial_interval
      Routine screen_display_images
    LoopTerminator trials
  LoopTerminator blocks
  Routine finish_instructions
